---
API: 3
OpenSesame: 4.1.6
Platform: nt
---
set width 1366
set title FPJT_online
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "e41d90e8-8d2a-4a2f-b894-26d8a73deef1"
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 25
set font_italic False
set font_family Arial
set font_bold False
set experiment_path "C:\\Users\\c7201264\\OneDrive\\10_Paper\\105_MIA\\03_Platform\\FPJT\\OpenSesame-online"
set disable_garbage_collection False
set description "FPJT online for OSWeb; behavior aligned with PsychoPy Online"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#dfdfdf"

define form_multiple_choice age
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	6
	7
	8
	9
	10
	11
	12
	13
	14
	15
	16
	17
	18
	19
	20
	21
	22
	23
	24
	25
	26
	27
	28
	29
	30
	31
	32
	33
	34
	35
	36
	37
	38
	39
	40
	41
	42
	43
	44
	45
	46
	47
	48
	49
	50
	51
	52
	53
	54
	55
	56
	57
	58
	59
	60
	61
	62
	63
	64
	65
	66
	67
	68
	69
	70
	71
	72
	73
	74
	75
	76
	77
	78
	79
	80
	81
	82
	83
	84
	85
	__end__
	set margins "50;50;50;50"
	set form_var age
	set form_title "{age_item}"
	set description ""
	set button_text Ok
	set background white
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define feedback audio_gap
	set reset_variables yes
	set duration 1600
	set description "1600-ms inter-instruction interval"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{close_eyes_msg}" x=0 y=-330 z_index=0
	draw image center=1 file="close-eyes.png" scale=0.2 show_if=True x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0

define feedback audio_lead
	set reset_variables yes
	set duration 300
	set description "300-ms closed-eyes lead"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{close_eyes_msg}" x=0 y=-330 z_index=0
	draw image center=1 file="close-eyes.png" scale=0.2 show_if=True x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0

define loop audio_loop
	set source_file ""
	set source table
	set repeat 7
	set order sequential
	set description "Play all movement instructions"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "audio_index >= n_audios"
	setcycle 0 empty_column ""
	run audio_sequence

define sequence audio_sequence
	set flush_keyboard yes
	set description "One movement instruction"
	run select_instruction_audio True
	run audio_lead True
	run instruction_audio True
	run audio_gap True

define feedback bye
	set reset_variables yes
	set duration 3000
	set description "Completion message"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=31 html=yes show_if=True text="{bye_msg}" x=0 y=0 z_index=0

define sequence comprehension_attempt
	set flush_keyboard yes
	set description "One comprehension attempt"
	run init_cc_attempt True
	run task_instruction_1_min True
	run task_instruction_1_next True
	run space True
	run task_instruction_2_min True
	run task_instruction_2_next True
	run space True
	run comprehension_form True
	run eval_comprehension True
	run logger_comprehension True
	run comprehension_feedback_min True
	run comprehension_feedback_next True
	run space True

define feedback comprehension_feedback_min
	set reset_variables yes
	set duration 2000
	set description "Comprehension feedback, minimum two seconds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=42 html=yes show_if=True text="{CC_feedback_msg}" x=0 y=-77 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=True text="{CC_error_msg}" x=0 y=115 z_index=0

define feedback comprehension_feedback_next
	set reset_variables yes
	set duration 0
	set description "Comprehension feedback, ready"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=42 html=yes show_if=True text="{CC_feedback_msg}" x=0 y=-77 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=True text="{CC_error_msg}" x=0 y=115 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define form_multiple_choice comprehension_form
	set timeout infinite
	set spacing 4
	set question "{CC_instr_msg_2}"
	__options__
	{CC_option_A}
	{CC_option_B}
	{CC_option_C}
	{CC_option_D}
	{CC_option_E}
	{CC_option_F}
	__end__
	set margins "10;60;10;60"
	set form_var CC_response
	set form_title "{CC_instr_msg_1}"
	set font_size 18
	set description "OSWeb multi-select comprehension form"
	set button_text "{next_msg}"
	set allow_multiple yes
	set advance_immediately no
	set _theme gray

define loop comprehension_loop
	set source_file ""
	set source table
	set repeat 50
	set order sequential
	set description "Repeat until C, D, and F are selected"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "CC_answer == 1"
	setcycle 0 empty_column ""
	run comprehension_attempt

define sequence comprehension_sequence
	set flush_keyboard yes
	set description "Repeat instructions and comprehension check until passed"
	run init_comprehension True
	run comprehension_loop True

define sequence demographics_sequence
	set flush_keyboard yes
	set description "Online demographics"
	run age True
	run gender True
	run handedness True
	run eval_demographics True

define inline_javascript eval_comprehension
	set description "PsychoPy-compatible C/D/F criterion"
	___run__
	var cc_values = String(CC_response).split(";");
	poly_A_state = Number(cc_values.indexOf(String(CC_option_A)) >= 0);
	poly_B_state = Number(cc_values.indexOf(String(CC_option_B)) >= 0);
	poly_C_state = Number(cc_values.indexOf(String(CC_option_C)) >= 0);
	poly_D_state = Number(cc_values.indexOf(String(CC_option_D)) >= 0);
	poly_E_state = Number(cc_values.indexOf(String(CC_option_E)) >= 0);
	poly_F_state = Number(cc_values.indexOf(String(CC_option_F)) >= 0);
	CC_answer = Number(poly_C_state === 1 && poly_D_state === 1 && poly_F_state === 1);
	CC_feedback_msg = CC_answer === 1 ? feedback_correct_msg : feedback_incorrect_msg;
	CC_error_msg = CC_answer === 1 ? "" : CC_error;
	__end__
	set _prepare ""

define inline_javascript eval_demographics
	set description "Language-independent demographic codes"
	___run__
	// translate responses back into uniform code independent of language
	if (handedness === handedness_l) {
	    handedness = "l" // left
	} else if (handedness === handedness_r) {
	    handedness = "r" // right
	} else if (handedness === handedness_b) {
	    handedness = "b" // both
	}
	
	selected_gender = gender;
	if (gender === f_msg) { gender = "f";}
	else if (gender === m_msg) { gender = "m";}
	else {gender = "d";}
	__end__
	set _prepare ""

define inline_javascript eval_familiarisation
	set description "Evaluate familiarisation response"
	___run__
	famil_answer = Number(String(famil_selected) === String(famil_option_solution));
	famil_feedback_msg = famil_answer === 1 ? feedback_correct_msg : feedback_incorrect_msg;
	trial_response = famil_selected;
	__end__
	set _prepare ""

define inline_javascript eval_familiarisation_click
	set description "Map mouse coordinates to A-D"
	___run__
	var click_x = Number(cursor_x);
	var click_y = Number(cursor_y);
	var familiar_letters = ["A", "B", "C", "D"];
	var familiar_y = [154, 215, 276, 338];
	famil_click_valid = 0;
	for (var click_i = 0; click_i < familiar_letters.length; click_i++) {
	    var dx = click_x + 422;
	    var dy = click_y - familiar_y[click_i];
	    if (dx * dx + dy * dy <= 18 * 18) {
	        famil_selected = familiar_letters[click_i];
	        famil_click_valid = 1;
	        break;
	    }
	}
	__end__
	set _prepare ""

define inline_javascript eval_practice_response
	set description "Evaluate practice response"
	___run__
	trial_response = String(response_practice_response).toLowerCase();
	fpjt_rt = Number(response_time_practice_response);
	fpjt_rt_s = fpjt_rt / 1000;
	fpjt_correct = Number(trial_response === correct_key);
	trial_feedback_duration = 3500;
	trial_feedback_msg = (fpjt_correct === 1 ? feedback_correct_msg : feedback_incorrect_msg)
	    + "<br><br><br>" + (Math.round(fpjt_rt_s * 100) / 100) + " s";
	__end__
	set _prepare ""

define inline_javascript eval_test_response
	set description "Evaluate test response"
	___run__
	trial_response = String(response_test_response).toLowerCase();
	fpjt_rt = Number(response_time_test_response);
	fpjt_rt_s = fpjt_rt / 1000;
	fpjt_correct = Number(trial_response === correct_key);
	trial_feedback_duration = 3000;
	trial_feedback_msg = (fpjt_correct === 1 ? feedback_correct_msg : feedback_incorrect_msg)
	    + "<br><br><br>" + (Math.round(fpjt_rt_s * 100) / 100) + " s";
	__end__
	set _prepare ""

define inline_javascript eval_volume_click
	set description "Accept only the orange button"
	___run__
	var volume_x = Number(cursor_x);
	var volume_y = Number(cursor_y);
	volume_click_valid = Number(volume_x >= -192 && volume_x <= 192 && volume_y >= 0 && volume_y <= 154);
	__end__
	set _prepare ""

define inline_javascript eval_volume_replay_click
	set description "Replay test sound after a valid button click"
	___run__
	if (response_volume_click_poll != "None") {
	    var volume_x = Number(cursor_x);
	    var volume_y = Number(cursor_y);
	    if (volume_x >= -192 && volume_x <= 192 && volume_y >= 0 && volume_y <= 154) {
	        play_test_sound = 1;
	    }
	}
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "FPJT Online flow"
	run preparations True
	run init_localiser True
	run init_settings True
	run init_demographics True
	run init_messages True
	run welcome_sequence True
	run demographics_sequence True
	run volume_calibration_loop True
	run familiarisation_sequence True
	run comprehension_sequence True
	run practice_sequence True
	run test_sequence True
	run bye True

define feedback familiar_instruction_1
	set reset_variables yes
	set duration 4000
	set description "Familiarisation instructions, minimum four seconds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=31 html=yes show_if=True text="{fam_msg_1a}" x=0 y=-307 z_index=0
	draw image center=1 file="straight.jpg" scale=0.5 show_if=True x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=31 html=yes show_if=True text="{fam_msg_1b}" x=0 y=269 z_index=0

define feedback familiar_instruction_2
	set reset_variables yes
	set duration 0
	set description "Familiarisation instructions, ready"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=31 html=yes show_if=True text="{fam_msg_1a}" x=0 y=-307 z_index=0
	draw image center=1 file="straight.jpg" scale=0.5 show_if=True x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=31 html=yes show_if=True text="{fam_msg_1b}" x=0 y=269 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define sampler familiarisation_announce
	set volume 1
	set stop_after 0
	set sample "{famil_announce_audio}"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays {famil_announce_audio}"

define feedback familiarisation_announce_hold
	set reset_variables yes
	set duration 2400
	set description "Hold during announcement"
	draw image center=1 file="{famil_image}" scale=0.54 show_if=True x=0 y=-177 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=42 html=yes show_if=True text="{famil_feedback_msg}" x=0 y=154 z_index=0

define sequence familiarisation_click_attempt
	set flush_keyboard yes
	set description "One familiarisation response attempt"
	run familiarisation_response_display True
	run familiarisation_mouse True
	run eval_familiarisation_click True

define loop familiarisation_click_loop
	set source_file ""
	set source table
	set repeat 1000
	set order sequential
	set description "Require a click on one response circle"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "famil_click_valid == 1"
	setcycle 0 empty_column ""
	run familiarisation_click_attempt

define feedback familiarisation_feedback_lead
	set reset_variables yes
	set duration 300
	set description "Familiarisation feedback lead"
	draw image center=1 file="{famil_image}" scale=0.54 show_if=True x=0 y=-177 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=42 html=yes show_if=True text="{famil_feedback_msg}" x=0 y=154 z_index=0

define feedback familiarisation_feedback_ready
	set reset_variables yes
	set duration 0
	set description "Familiarisation feedback ready"
	draw image center=1 file="{famil_image}" scale=0.54 show_if=True x=0 y=-177 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=42 html=yes show_if=True text="{famil_feedback_msg}" x=0 y=154 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define loop familiarisation_loop
	set source_file ""
	set source table
	set repeat 100
	set order sequential
	set description "Random familiarisation trials"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "famil_row_idx >= famil_order_length"
	setcycle 0 empty_column ""
	run familiarisation_trial_sequence

define mouse_response familiarisation_mouse
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Select a familiarisation option"
	set allowed_responses left_button

define sketchpad familiarisation_response_display
	set duration 0
	set description "Four-option familiarisation response"
	draw image center=1 file="{famil_image}" scale=0.54 show_if=True x=0 y=-177 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{fam_msg_2}" x=0 y=92 z_index=0
	draw circle color=black fill=0 penwidth=2 r=12 show_if=True x=-422 y=154 z_index=0
	draw textline center=0 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{famil_optA_msg}" x=-384 y=141 z_index=0
	draw circle color=black fill=0 penwidth=2 r=12 show_if=True x=-422 y=215 z_index=0
	draw textline center=0 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{famil_optB_msg}" x=-384 y=202 z_index=0
	draw circle color=black fill=0 penwidth=2 r=12 show_if=True x=-422 y=276 z_index=0
	draw textline center=0 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{famil_optC_msg}" x=-384 y=263 z_index=0
	draw circle color=black fill=0 penwidth=2 r=12 show_if=True x=-422 y=338 z_index=0
	draw textline center=0 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{famil_optD_msg}" x=-384 y=325 z_index=0

define feedback familiarisation_selection
	set reset_variables yes
	set duration 500
	set description "Show selected option for 500 ms"
	draw image center=1 file="{famil_image}" scale=0.54 show_if=True x=0 y=-177 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{fam_msg_2}" x=0 y=92 z_index=0
	draw circle color=black fill=0 penwidth=2 r=12 show_if=True x=-422 y=154 z_index=0
	draw textline center=0 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{famil_optA_msg}" x=-384 y=141 z_index=0
	draw circle color=black fill=0 penwidth=2 r=12 show_if=True x=-422 y=215 z_index=0
	draw textline center=0 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{famil_optB_msg}" x=-384 y=202 z_index=0
	draw circle color=black fill=0 penwidth=2 r=12 show_if=True x=-422 y=276 z_index=0
	draw textline center=0 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{famil_optC_msg}" x=-384 y=263 z_index=0
	draw circle color=black fill=0 penwidth=2 r=12 show_if=True x=-422 y=338 z_index=0
	draw textline center=0 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{famil_optD_msg}" x=-384 y=325 z_index=0
	draw circle color=black fill=1 penwidth=2 r=12 show_if="[famil_selected] = A" x=-422 y=154 z_index=0
	draw circle color=black fill=1 penwidth=2 r=12 show_if="[famil_selected] = B" x=-422 y=215 z_index=0
	draw circle color=black fill=1 penwidth=2 r=12 show_if="[famil_selected] = C" x=-422 y=276 z_index=0
	draw circle color=black fill=1 penwidth=2 r=12 show_if="[famil_selected] = D" x=-422 y=338 z_index=0

define sequence familiarisation_sequence
	set flush_keyboard yes
	set description "Sixteen randomized familiarisation trials"
	run familiar_instruction_1 True
	run familiar_instruction_2 True
	run space True
	run init_familiarisation True
	run familiarisation_loop True

define sampler familiarisation_solution
	set volume 1
	set stop_after 0
	set sample "{famil_solution_audio}"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays {famil_solution_audio}"

define feedback familiarisation_solution_hold
	set reset_variables yes
	set duration 2500
	set description "Hold during spoken solution"
	draw image center=1 file="{famil_image}" scale=0.54 show_if=True x=0 y=-177 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=42 html=yes show_if=True text="{famil_feedback_msg}" x=0 y=154 z_index=0

define sequence familiarisation_trial_sequence
	set flush_keyboard yes
	set description "One familiarisation trial"
	run init_familiarisation_trial True
	run familiarisation_click_loop True
	run familiarisation_selection True
	run eval_familiarisation True
	run familiarisation_feedback_lead True
	run familiarisation_announce True
	run familiarisation_announce_hold True
	run familiarisation_solution True
	run familiarisation_solution_hold True
	run familiarisation_feedback_ready True
	run space True
	run logger_familiarisation True

define feedback fixation_gap
	set reset_variables yes
	set duration 1900
	set description "1900-ms post-signal fixation"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=True text="+" x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0

define feedback fixation_lead
	set reset_variables yes
	set duration 300
	set description "300-ms fixation lead"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=26 html=yes show_if=True text="+" x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0

define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{f_msg}
	{m_msg}
	{tg_msg}
	{nb_msg}
	{o_msg}
	{pns_msg}
	__end__
	set margins "40;140;40;140"
	set form_var gender
	set form_title "{gender_msg}"
	set description Gender
	set button_text "{next_msg}"
	set background white
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice handedness
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{left_msg}
	{ambi_msg}
	{right_msg}
	__end__
	set margins "60;180;60;180"
	set form_var handedness
	set form_title "{laterality_msg}"
	set description "Hand dominance"
	set button_text "{next_msg}"
	set background white
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_javascript init_audio_sequence
	set description "Reset movement-audio index"
	___run__
	audio_index = 0;
	__end__
	set _prepare ""

define inline_javascript init_cc_attempt
	set description "Count comprehension attempts"
	___run__
	CC_attempt = CC_attempt + 1;
	CC_response = "";
	__end__
	set _prepare ""

define inline_javascript init_comprehension
	set description "Initialize comprehension check"
	___run__
	phase = "comprehension_check";
	block_type = "comprehension_check";
	source_file = "Messages.csv";
	CC_attempt = 0;
	CC_answer = 0;
	__end__
	set _prepare ""

define inline_javascript init_demographics
	set description ""
	___run__
	// Load and parse messages.csv into array of objects
	const dmg_csv_data = pool['Demographics.csv'].data;
	const dmg_df = csvParse(dmg_csv_data, {columns: true, delimiter: ';'}); // makes sure that we can use commas inside the text as OpenSesame does not yet support quotes around a text with commas as a single cell in a csv-file with comma-separator
	
	// For each row: create a global variable with the message key and assign the translation
	dmg_df.forEach(function(row) {
	    varname = row.demographics;
	    value = row[lang_col];
	    // Assign as global experimental variable
	    vars[varname] = value;
	});
	
	// Debug
	console.log('dmg_df:', dmg_df)
	__end__
	set _prepare ""

define inline_javascript init_familiarisation
	set description "Create random familiarisation order"
	___run__
	phase = "familiarisation";
	block_type = "familiarisation";
	
	const famil_csv_data = pool["Famil_trials.csv"].data; 
	let famil_df = csvParse(famil_csv_data, { columns: true, delimiter: ';' });
	
	var famil_row_idx = 0;
	var famil_order = [];
	for (let i = 0; i < famil_df.length; i++) {
	    famil_order.push(i);
	}
	for (let i = famil_order.length - 1; i > 0; i--) {
	    const j = Math.floor(Math.random() * (i + 1));
	    [famil_order[i], famil_order[j]] = [famil_order[j], famil_order[i]];
	}
	var famil_order_length = famil_order.length;
	__end__
	set _prepare ""

define inline_javascript init_familiarisation_trial
	set description "Expose the next familiarisation row before stimuli prepare"
	___run__
	famil_row_idx = famil_row_idx + 1;
	__end__
	___prepare__
	var famil_source_index = famil_order[famil_row_idx];
	var famil_row = famil_df[famil_source_index];
	var n_trial = famil_row_idx + 1;
	var row_idx = famil_source_index;
	var famil_image = String(famil_row.famil_image).replace(/\\/g, "/").split("/").pop().trim();
	var famil_solution = String(famil_row.famil_solution).trim();
	var famil_option_solution = String(famil_row.famil_option_solution).trim();
	var famil_optA_msg = vars[String(famil_row.famil_optionA).trim()];
	var famil_optB_msg = vars[String(famil_row.famil_optionB).trim()];
	var famil_optC_msg = vars[String(famil_row.famil_optionC).trim()];
	var famil_optD_msg = vars[String(famil_row.famil_optionD).trim()];
	var famil_selected = "";
	var famil_answer = "";
	var famil_click_valid = 0;
	var famil_feedback_msg = "";
	var trial_response = "";
	var famil_announce_audio = "solution_" + lang_code + ".wav";
	var famil_solution_audio = famil_solution + "_" + lang_code + ".wav";
	__end__

define inline_javascript init_localiser
	set description "Read OSWeb UTF-8 language CSV"
	___run__
	// Reads the file 'language_localiser.csv' from the file pool, parses it, and creates a JavaScript array of languages, which corresponds to the original language_list.
	const lang_csv_data = pool['Language_localiser.csv'].data;
	
	// Parse CSV to array of objects (columns are taken from header row)
	const lang_df = csvParse(lang_csv_data, {columns: true, delimiter: ';'}); // makes sure that we can use commas inside the text as OpenSesame does not yet support quotes around a text with commas as a single cell in a csv-file with comma-separator
	
	// Extract 'language' column as array
	const language_list = lang_df.map(row => row.language);
	
	// Debug output to check
	console.log('Languages loaded:', language_list);
	__end__
	set _prepare ""

define inline_javascript init_messages
	set description "Load localized HTML messages from semicolon CSV"
	___run__
	// Load and parse messages.csv into array of objects
	const msg_csv_data = pool['Messages.csv'].data;
	const msg_df = csvParse(msg_csv_data, {columns: true, delimiter: ';'}); // makes sure that we can use commas inside the text as OpenSesame does not yet support quotes around a text with commas as a single cell in a csv-file with comma-separator
	
	// For each row: create a global variable with the message key and assign the translation
	msg_df.forEach(function(row) {
	    varname = row.message;
	    value = row[lang_col];
	    // Assign as global experimental variable
	    vars[varname] = value;
	});
	
	// response mode specific
	var task_instr_msg_1 = task_instr_msg_1_bimanual;
	var task_instr_msg_3 = task_instr_msg_3_bimanual;
	
	if (selected_response_mode === "Right hand")  {
	    task_instr_msg_1 = task_instr_msg_1_right;
	    task_instr_msg_3 = task_instr_msg_3_right;
	    } else if (selected_response_mode === "Left hand") {
	    task_instr_msg_1 = task_instr_msg_1_left;
	    task_instr_msg_3 = task_instr_msg_3_left;
	} 
	
	// feedback specific
	var no_feedback_text = ""
	
	if (selected_feedback === "No feedback in testblock")  {
	    no_feedback_text = no_feedback_msg;
	} 
	
	
	// Debug
	console.log('msg_df:', msg_df)
	__end__
	set _prepare ""

define inline_javascript init_practice
	set description "Load and randomize practice CSVs"
	___run__
	phase = "fpjt";
	block_type = "practice";
	var source_file = "Practice_trials.csv";
	var n_trial = 0;
	const pract_csv_data = pool["Practice_trials.csv"].data;
	const pract_audio_csv_data = pool["Practice_audios.csv"].data;
	let pract_df = csvParse(pract_csv_data, { columns: true, delimiter: ';' });
	let pract_audio_df = csvParse(pract_audio_csv_data, { columns: true, delimiter: ';' });
	var pract_row_idx = 0;
	var pract_order = [];
	for (let i = 0; i < pract_df.length; i++) {
	    pract_order.push(i);
	}
	for (let i = pract_order.length - 1; i > 0; i--) {
	    const j = Math.floor(Math.random() * (i + 1));
	    [pract_order[i], pract_order[j]] = [pract_order[j], pract_order[i]];
	}
	var pract_order_length = pract_order.length;
	__end__
	set _prepare ""

define inline_javascript init_practice_trial
	set description "Expose next practice row before stimulus preparation"
	___run__
	pract_row_idx = pract_row_idx + 1;
	__end__
	___prepare__
	var row_idx = pract_order[pract_row_idx];
	var practice_row = pract_df[row_idx];
	var n_trial = pract_row_idx + 1;
	var item = String(practice_row.item).trim();
	var n_audios = Number(practice_row.n_audios);
	var n_movements = n_audios - 1;
	var fpjt_image = String(practice_row.fpjt_image).replace(/\\/g, "/").split("/").pop().trim();
	var correct_both = String(practice_row.correct_both).trim().toLowerCase();
	var correct_one = String(practice_row.correct_one).trim().toLowerCase();
	var correct_key = selected_response_mode === "Both hands" ? correct_both : correct_one;
	var solution = correct_key;
	var allowed_responses = selected_response_mode === "Both hands" ? "s;l" : "g;h";
	var audio_files = pract_audio_df
	    .map(function(audio_row) { return audio_row[item]; })
	    .filter(function(stem) { return stem !== undefined && stem !== null && String(stem).trim() !== ""; })
	    .slice(0, n_audios)
	    .map(function(stem) {
	        return String(stem).replace(/\\/g, "/").split("/").pop().trim() + "_" + lang_code + ".wav";
	    });
	var audio_index = 0;
	var instruction_audio_file = "";
	var trial_response = "";
	var fpjt_correct = "";
	var fpjt_rt = "";
	var fpjt_rt_s = "";
	var trial_feedback_duration = 3500;
	var trial_feedback_msg = "";
	var n_audio_false = "";
	var bodypart_false = "";
	var a2 = "";
	var a3 = "";
	var a4 = "";
	var a5 = "";
	var a6 = "";
	var a7 = "";
	__end__

define inline_javascript init_settings
	set description "Resolve ISO code and fixed PsychoPy Online settings"
	___run__
	//// ISO code
	var selected_ISO = lang_df.find(row => row.language === selected_language)?.ISO_code;
	lang_code = selected_ISO;
	lang_col = selected_ISO;
	language = selected_language;
	
	//// response_mode: keys
	if (selected_response_mode === "Both hands") {
	    left_key_image = "s-key.png";
	    right_key_image = "l-key.png";
	    allowed_responses = "s;l";
	    } else {
	    left_key_image = "g-key.png";
	    right_key_image = "h-key.png";
	    allowed_responses = "g;h";
	}
	__end__
	set _prepare ""

define inline_javascript init_test
	set description "Load and randomize test CSVs"
	___run__
	phase = "fpjt";
	block_type = "testblock";
	var source_file = "Testblock_trials.csv";
	var n_trial = 0;
	const test_csv_data = pool["Testblock_trials.csv"].data;
	const test_audio_csv_data = pool["Testblock_audios.csv"].data;
	let test_df = csvParse(test_csv_data, { columns: true, delimiter: ';' });
	let test_audio_df = csvParse(test_audio_csv_data, { columns: true, delimiter: ';' });
	var test_row_idx = 0;
	var test_order = [];
	for (let i = 0; i < test_df.length; i++) {
	    test_order.push(i);
	}
	for (let i = test_order.length - 1; i > 0; i--) {
	    const j = Math.floor(Math.random() * (i + 1));
	    [test_order[i], test_order[j]] = [test_order[j], test_order[i]];
	}
	var test_order_length = test_order.length;
	__end__
	set _prepare ""

define inline_javascript init_test_trial
	set description "Expose next test row before stimulus preparation"
	___run__
	test_row_idx = test_row_idx + 1;
	__end__
	___prepare__
	var row_idx = test_order[test_row_idx];
	var test_row = test_df[row_idx];
	var n_trial = test_row_idx + 1;
	var item = String(test_row.item).trim();
	var n_audios = Number(test_row.n_audios);
	var n_movements = n_audios - 1;
	var fpjt_image = String(test_row.fpjt_image).replace(/\\/g, "/").split("/").pop().trim();
	var correct_both = String(test_row.correct_both).trim().toLowerCase();
	var correct_one = String(test_row.correct_one).trim().toLowerCase();
	var correct_key = selected_response_mode === "Both hands" ? correct_both : correct_one;
	var solution = correct_key;
	var allowed_responses = selected_response_mode === "Both hands" ? "s;l" : "g;h";
	var audio_files = test_audio_df
	    .map(function(audio_row) { return audio_row[item]; })
	    .filter(function(stem) { return stem !== undefined && stem !== null && String(stem).trim() !== ""; })
	    .slice(0, n_audios)
	    .map(function(stem) {
	        return String(stem).replace(/\\/g, "/").split("/").pop().trim() + "_" + lang_code + ".wav";
	    });
	var audio_index = 0;
	var instruction_audio_file = "";
	var trial_counter_text = String(n_trial) + " / " + String(test_order_length);
	var trial_response = "";
	var fpjt_correct = "";
	var fpjt_rt = "";
	var fpjt_rt_s = "";
	var trial_feedback_duration = 3000;
	var trial_feedback_msg = "";
	var a2 = String(test_row.a2);
	var a3 = String(test_row.a3);
	var a4 = String(test_row.a4);
	var a5 = String(test_row.a5);
	var a6 = String(test_row.a6);
	var a7 = String(test_row.a7);
	var n_audio_false = Number(test_row.n_audio_false);
	var bodypart_false = String(test_row.bodypart_false);
	__end__

define inline_javascript init_volume_calibration
	set description "Select localized test sound"
	set _run ""
	___prepare__
	test_sound_audio = "testsound_" + lang_code + ".wav";
	volume_click_valid = 0;
	__end__

define inline_javascript init_volume_space_listener
	set description "Listen for SPACE during volume calibration"
	___run__
	var volume_done = 0;
	var play_test_sound = 1;
	var volume_space_handler = function(event) {
	    if (event.code == "Space") {
	        event.preventDefault();
	        volume_done = 1;
	    }
	};
	window.addEventListener("keydown", volume_space_handler);
	__end__
	set _prepare ""

define sampler instruction_audio
	set volume 1
	set stop_after 0
	set sample "{instruction_audio_file}"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays {instruction_audio_file}"

define logger logger
	set description "Explicit FPJT logger"
	set auto_log no
	log subject_nr
	log participant
	log selected_language
	log language
	log selected_ISO
	log lang_code
	log selected_response_mode
	log selected_feedback
	log age
	log selected_gender
	log gender
	log gender_code
	log selected_handedness
	log handedness
	log handedness_code
	log phase
	log block_type
	log source_file
	log CC_attempt
	log CC_answer
	log CC_response
	log poly_A_state
	log poly_B_state
	log poly_C_state
	log poly_D_state
	log poly_E_state
	log poly_F_state
	log famil_row_idx
	log famil_image
	log famil_solution
	log famil_option_solution
	log famil_selected
	log famil_answer
	log n_trial
	log row_idx
	log item
	log n_audios
	log n_movements
	log fpjt_image
	log correct_both
	log correct_one
	log correct_key
	log solution
	log allowed_responses
	log trial_response
	log fpjt_correct
	log fpjt_rt
	log fpjt_rt_s
	log response_practice_response
	log response_time_practice_response
	log response_test_response
	log response_time_test_response
	log n_audio_false
	log a2
	log a3
	log a4
	log a5
	log a6
	log a7
	log bodypart_false

define sequence logger_comprehension
	set flush_keyboard yes
	set description "logger_comprehension wrapper"
	run logger True

define sequence logger_familiarisation
	set flush_keyboard yes
	set description "logger_familiarisation wrapper"
	run logger True

define sequence logger_practice
	set flush_keyboard yes
	set description "logger_practice wrapper"
	run logger True

define sequence logger_test
	set flush_keyboard yes
	set description "logger_test wrapper"
	run logger True

define feedback practice_instruction_min
	set reset_variables yes
	set duration 5000
	set description "Practice instructions, minimum five seconds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=35 html=yes show_if=True text="{pract_instr_msg}" x=0 y=-230 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_3}" x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0

define feedback practice_instruction_ready
	set reset_variables yes
	set duration 0
	set description "Practice instructions, ready"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=35 html=yes show_if=True text="{pract_instr_msg}" x=0 y=-230 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_3}" x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 100
	set order sequential
	set description "Four randomized practice trials"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "pract_row_idx >= pract_order_length"
	setcycle 0 empty_column ""
	run practice_trial_sequence

define keyboard_response practice_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Practice yes/no response"
	set correct_response "{correct_key}"
	set allowed_responses "{allowed_responses}"

define sequence practice_sequence
	set flush_keyboard yes
	set description "Four randomized practice trials"
	run practice_instruction_min True
	run practice_instruction_ready True
	run space True
	run init_practice True
	run practice_loop True

define sketchpad practice_stimulus
	set duration 0
	set description "Practice stimulus onset"
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0
	draw image center=1 file="{fpjt_image}" scale=0.699 show_if=True x=0 y=0 z_index=0

define sequence practice_trial_sequence
	set flush_keyboard yes
	set description "One practice trial"
	run init_practice_trial True
	run start_practice_trial True
	run space True
	run init_audio_sequence True
	run audio_loop True
	run signal_sequence True
	run practice_stimulus True
	run practice_response True
	run eval_practice_response True
	run trial_feedback True
	run logger_practice True

define inline_javascript preparations
	set description "Participant-safe defaults and shared OSWeb helpers"
	___run__
	subject_nr = Math.floor(Math.random() * 100000000000); // create unique ID
	var n_trial = 0; // trial counter
	var solution = 0; // correct response will be s or l
	var phase = "preparation";
	var block_type = undefined;
	
	// initialize defaults for experiment settings
	var selected_language = "Spanish"; // change here
	var selected_response_mode = "Both hands"; // change here
	var selected_feedback = "No feedback in testblock"; // change here
	
	// other
	var ISO_code = "DE";
	var selected_ISO = "DE";
	var lang_col = "DE"
	var lang_code = "DE"
	var age = undefined;
	var gender = undefined;
	var handedness = undefined;
	__end__
	set _prepare ""

define feedback reminder_min
	set reset_variables yes
	set duration 6000
	set description "Reminder, minimum six seconds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{reminder_msg}" x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0

define feedback reminder_ready
	set reset_variables yes
	set duration 0
	set description "Reminder, ready"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{reminder_msg}" x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define inline_javascript remove_volume_space_listener
	set description "Remove volume-calibration SPACE listener"
	___run__
	window.removeEventListener("keydown", volume_space_handler);
	__end__
	set _prepare ""

define inline_javascript reset_volume_playback
	set description "Reset test-sound playback flag"
	___run__
	play_test_sound = 0;
	__end__
	set _prepare ""

define inline_javascript select_instruction_audio
	set description "Select current localized movement audio"
	___run__
	audio_index = audio_index + 1;
	__end__
	___prepare__
	instruction_audio_file = audio_files[audio_index];
	__end__

define sequence signal_sequence
	set flush_keyboard yes
	set description "Signal tone and fixation"
	run fixation_lead True
	run signal_tone True
	run fixation_gap True

define sampler signal_tone
	set volume 0.6
	set stop_after 0
	set sample "signal_tone.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays signal_tone.wav"

define keyboard_response space
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Continue with SPACE"
	set allowed_responses space

define feedback start_practice_trial
	set reset_variables yes
	set duration 0
	set description "Practice close-eyes screen"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{close_eyes_msg}" x=0 y=-330 z_index=0
	draw image center=1 file="close-eyes.png" scale=0.2 show_if=True x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{start_msg}" x=0 y=346 z_index=0

define feedback start_test_trial
	set reset_variables yes
	set duration 0
	set description "Test close-eyes screen with trial counter"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{close_eyes_msg}" x=0 y=-330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=38 html=yes show_if=True text="{trial_counter_text}" x=0 y=-284 z_index=0
	draw image center=1 file="close-eyes.png" scale=0.2 show_if=True x=0 y=0 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{start_msg}" x=0 y=346 z_index=0

define feedback task_instruction_1_min
	set reset_variables yes
	set duration 11000
	set description "Response-key instructions, minimum eleven seconds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_1}" x=0 y=-77 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.399 show_if=True x=-230 y=261 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.399 show_if=True x=230 y=261 z_index=0

define feedback task_instruction_1_next
	set reset_variables yes
	set duration 0
	set description "Response-key instructions, ready"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_1}" x=0 y=-77 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.399 show_if=True x=-230 y=261 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.399 show_if=True x=230 y=261 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define feedback task_instruction_2_min
	set reset_variables yes
	set duration 11000
	set description "Imagery instructions, minimum eleven seconds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_2a}" x=0 y=-230 z_index=0
	draw image center=1 file="instr_img1.jpg" scale=0.399 show_if=True x=-520 y=0 z_index=0
	draw image center=1 file="instr_img2.jpg" scale=0.399 show_if=True x=520 y=0 z_index=0
	draw textline center=1 color="#ff8c00" font_bold=no font_family=Arial font_italic=no font_size=23 html=yes show_if=True text="{task_instr_msg_2b}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_2c}" x=0 y=230 z_index=0

define feedback task_instruction_2_next
	set reset_variables yes
	set duration 0
	set description "Imagery instructions, ready"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_2a}" x=0 y=-230 z_index=0
	draw image center=1 file="instr_img1.jpg" scale=0.399 show_if=True x=-520 y=0 z_index=0
	draw image center=1 file="instr_img2.jpg" scale=0.399 show_if=True x=520 y=0 z_index=0
	draw textline center=1 color="#ff8c00" font_bold=no font_family=Arial font_italic=no font_size=23 html=yes show_if=True text="{task_instr_msg_2b}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_2c}" x=0 y=230 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define feedback test_instruction_min
	set reset_variables yes
	set duration 3000
	set description "Test instructions, minimum three seconds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=35 html=yes show_if=True text="{testbl_instr_msg}" x=0 y=-269 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{no_feedback_text}" x=0 y=-115 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_3}" x=0 y=46 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0

define feedback test_instruction_ready
	set reset_variables yes
	set duration 0
	set description "Test instructions, ready"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=35 html=yes show_if=True text="{testbl_instr_msg}" x=0 y=-269 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{no_feedback_text}" x=0 y=-115 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{task_instr_msg_3}" x=0 y=46 z_index=0
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define loop test_loop
	set source_file ""
	set source table
	set repeat 100
	set order sequential
	set description "Thirty-two randomized test trials"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "test_row_idx >= test_order_length"
	setcycle 0 empty_column ""
	run test_trial_sequence

define keyboard_response test_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Test yes/no response"
	set correct_response "{correct_key}"
	set allowed_responses "{allowed_responses}"

define sequence test_sequence
	set flush_keyboard yes
	set description "Thirty-two randomized test trials"
	run test_instruction_min True
	run test_instruction_ready True
	run space True
	run reminder_min True
	run reminder_ready True
	run space True
	run init_test True
	run test_loop True

define sampler test_sound
	set volume 1
	set stop_after 0
	set sample "{test_sound_audio}"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays {test_sound_audio}"

define sketchpad test_stimulus
	set duration 0
	set description "Test stimulus onset"
	draw image center=1 file="{left_key_image}" scale=0.246 show_if=True x=-384 y=338 z_index=0
	draw image center=1 file="{right_key_image}" scale=0.246 show_if=True x=384 y=338 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{no_msg}" x=-422 y=330 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=19 html=yes show_if=True text="{yes_msg}" x=422 y=330 z_index=0
	draw image center=1 file="{fpjt_image}" scale=0.7 show_if=True x=0 y=0 z_index=0

define sequence test_trial_sequence
	set flush_keyboard yes
	set description "One test trial"
	run init_test_trial True
	run start_test_trial True
	run space True
	run init_audio_sequence True
	run audio_loop True
	run signal_sequence True
	run test_stimulus True
	run test_response True
	run eval_test_response True
	run trial_feedback "selected_feedback == \"Yes\""
	run logger_test True

define feedback trial_feedback
	set reset_variables yes
	set duration "{trial_feedback_duration}"
	set description "Correct/incorrect and RT"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=46 html=yes show_if=True text="{trial_feedback_msg}" x=0 y=0 z_index=0

define sketchpad volume_button
	set reset_variables yes
	set duration 0
	set description "Clickable button"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=True text="{volume_calib_msg}" x=0 y=-177 z_index=0
	draw rect color="#ff8c00" fill=1 h=154 penwidth=1 show_if=True w=384 x=-192 y=0 z_index=0
	draw image center=1 file="sound-icon.png" scale=0.4 show_if=True x=250 y=77 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=30 html=yes show_if=True text="{testsound_label}" x=0 y=77 z_index=0

define loop volume_calibration_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Deferred volume calibration"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run volume_calibration_sequence

define feedback volume_calibration_min
	set reset_variables yes
	set duration 2000
	set description "Volume instructions, minimum two seconds"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=27 html=yes show_if=True text="{volume_calib_msg}" x=0 y=-177 z_index=0
	draw rect color="#ff8c00" fill=1 h=154 penwidth=1 show_if=True w=384 x=-192 y=0 z_index=0

define sequence volume_calibration_sequence
	set flush_keyboard yes
	set description "Browser/device volume calibration"
	run init_volume_calibration True
	run volume_calibration_min True
	run volume_click_loop True
	run init_volume_space_listener True
	run volume_playback_loop True
	run remove_volume_space_listener True

define mouse_response volume_click
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Click the test-sound button"
	set allowed_responses "left_button;right_button"

define sequence volume_click_attempt
	set flush_keyboard yes
	set description "One volume-button click attempt"
	run volume_button True
	run volume_click True
	run eval_volume_click True

define loop volume_click_loop
	set source_file ""
	set source table
	set repeat 1000
	set order sequential
	set description "Require click on test-sound button"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "volume_click_valid == 1"
	setcycle 0 empty_column ""
	run volume_click_attempt

define mouse_response volume_click_poll
	set timeout 50
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Poll test-sound button during calibration"
	set allowed_responses "left_button;right_button"

define sequence volume_playback_attempt
	set flush_keyboard no
	set description "Poll volume button and SPACE"
	run test_sound "play_test_sound == 1"
	run reset_volume_playback True
	run volume_click_poll True
	run eval_volume_replay_click True

define loop volume_playback_loop
	set source_file ""
	set source table
	set repeat 10000
	set order sequential
	set description "Replay test sound until SPACE is pressed"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "volume_done == 1"
	setcycle 0 empty_column ""
	run volume_playback_attempt

define feedback welcome
	set reset_variables yes
	set duration 0
	set description "Welcome screen"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=38 html=yes show_if=True text="{welcome_msg}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=25 html=yes show_if=True text="{adv_msg}" x=0 y=346 z_index=0

define sequence welcome_sequence
	set flush_keyboard yes
	set description Welcome
	run welcome True
	run space True

