PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you.
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'language': '["English", "German", "Spanish", "French"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['fpjt_files/Testblock_trials.xlsx', 'fpjt_files/Messages.xlsx', 'fpjt_files/Testblock_audios.xlsx', 'fpjt_audios/head_down_DE.wav', 'fpjt_audios/head_down_EN.wav', 'fpjt_audios/head_down_ES.wav', 'fpjt_audios/head_down_FR.wav', 'fpjt_audios/head_up_DE.wav', 'fpjt_audios/head_up_EN.wav', 'fpjt_audios/head_up_ES.wav', 'fpjt_audios/head_up_FR.wav', 'fpjt_audios/left_arm_front_DE.wav', 'fpjt_audios/left_arm_front_EN.wav', 'fpjt_audios/left_arm_front_ES.wav', 'fpjt_audios/left_arm_front_FR.wav', 'fpjt_audios/left_arm_side_DE.wav', 'fpjt_audios/left_arm_side_EN.wav', 'fpjt_audios/left_arm_side_ES.wav', 'fpjt_audios/left_arm_side_FR.wav', 'fpjt_audios/left_arm_up_DE.wav', 'fpjt_audios/left_arm_up_EN.wav', 'fpjt_audios/left_arm_up_ES.wav', 'fpjt_audios/left_arm_up_FR.wav', 'fpjt_audios/left_leg_back_DE.wav', 'fpjt_audios/left_leg_back_EN.wav', 'fpjt_audios/left_leg_back_ES.wav', 'fpjt_audios/left_leg_back_FR.wav', 'fpjt_audios/left_leg_front_DE.wav', 'fpjt_audios/left_leg_front_EN.wav', 'fpjt_audios/left_leg_front_ES.wav', 'fpjt_audios/left_leg_front_FR.wav', 'fpjt_audios/left_leg_side_DE.wav', 'fpjt_audios/left_leg_side_EN.wav', 'fpjt_audios/left_leg_side_ES.wav', 'fpjt_audios/left_leg_side_FR.wav', 'fpjt_audios/press_f_EN.wav', 'fpjt_audios/press_r_EN.wav', 'fpjt_audios/right_arm_front_DE.wav', 'fpjt_audios/right_arm_front_EN.wav', 'fpjt_audios/right_arm_front_ES.wav', 'fpjt_audios/right_arm_front_FR.wav', 'fpjt_audios/right_arm_side_DE.wav', 'fpjt_audios/right_arm_side_EN.wav', 'fpjt_audios/right_arm_side_ES.wav', 'fpjt_audios/right_arm_side_FR.wav', 'fpjt_audios/right_arm_up_DE.wav', 'fpjt_audios/right_arm_up_EN.wav', 'fpjt_audios/right_arm_up_ES.wav', 'fpjt_audios/right_arm_up_FR.wav', 'fpjt_audios/right_leg_back_DE.wav', 'fpjt_audios/right_leg_back_EN.wav', 'fpjt_audios/right_leg_back_ES.wav', 'fpjt_audios/right_leg_back_FR.wav', 'fpjt_audios/right_leg_front_DE.wav', 'fpjt_audios/right_leg_front_EN.wav', 'fpjt_audios/right_leg_front_ES.wav', 'fpjt_audios/right_leg_front_FR.wav', 'fpjt_audios/right_leg_side_DE.wav', 'fpjt_audios/right_leg_side_EN.wav', 'fpjt_audios/right_leg_side_ES.wav', 'fpjt_audios/right_leg_side_FR.wav', 'fpjt_audios/signal_tone.wav', 'fpjt_audios/solution_DE.wav', 'fpjt_audios/solution_EN.wav', 'fpjt_audios/solution_ES.wav', 'fpjt_audios/solution_FR.wav', 'fpjt_audios/straight_DE.wav', 'fpjt_audios/straight_EN.wav', 'fpjt_audios/straight_ES.wav', 'fpjt_audios/straight_FR.wav', 'fpjt_audios/testsound_DE.wav', 'fpjt_audios/testsound_EN.wav', 'fpjt_audios/testsound_ES.wav', 'fpjt_audios/testsound_FR.wav', 'fpjt_audios/torso_left_DE.wav', 'fpjt_audios/torso_left_EN.wav', 'fpjt_audios/torso_left_ES.wav', 'fpjt_audios/torso_left_FR.wav', 'fpjt_audios/torso_right_DE.wav', 'fpjt_audios/torso_right_EN.wav', 'fpjt_audios/torso_right_ES.wav', 'fpjt_audios/torso_right_FR.wav', 'Language_localiser.xlsx', 'fpjt_images/31.jpg', 'fpjt_images/32.jpg', 'fpjt_images/33.jpg', 'fpjt_images/34.jpg', 'fpjt_images/35.jpg', 'fpjt_images/36.jpg', 'fpjt_images/37.jpg', 'fpjt_images/38.jpg', 'fpjt_images/41.jpg', 'fpjt_images/42.jpg', 'fpjt_images/43.jpg', 'fpjt_images/44.jpg', 'fpjt_images/45.jpg', 'fpjt_images/46.jpg', 'fpjt_images/47.jpg', 'fpjt_images/48.jpg', 'fpjt_images/51.jpg', 'fpjt_images/52.jpg', 'fpjt_images/53.jpg', 'fpjt_images/54.jpg', 'fpjt_images/55.jpg', 'fpjt_images/56.jpg', 'fpjt_images/57.jpg', 'fpjt_images/58.jpg', 'fpjt_images/61.jpg', 'fpjt_images/62.jpg', 'fpjt_images/63.jpg', 'fpjt_images/64.jpg', 'fpjt_images/65.jpg', 'fpjt_images/66.jpg', 'fpjt_images/67.jpg', 'fpjt_images/68.jpg', 'fpjt_images/close-eyes.png', 'fpjt_images/g-key.png', 'fpjt_images/head_down.jpg', 'fpjt_images/head_up.jpg', 'fpjt_images/h-key.png', 'fpjt_images/instr_img1.jpg', 'fpjt_images/instr_img2.jpg', 'fpjt_images/left_arm_front.jpg', 'fpjt_images/left_arm_side.jpg', 'fpjt_images/left_arm_up.jpg', 'fpjt_images/left_leg_back.jpg', 'fpjt_images/left_leg_front.jpg', 'fpjt_images/left_leg_side.jpg', 'fpjt_images/left-index.png', 'fpjt_images/l-key.png', 'fpjt_images/practice1.jpg', 'fpjt_images/practice2.jpg', 'fpjt_images/practice3.jpg', 'fpjt_images/practice4.jpg', 'fpjt_images/right_arm_front.jpg', 'fpjt_images/right_arm_side.jpg', 'fpjt_images/right_arm_up.jpg', 'fpjt_images/right_leg_back.jpg', 'fpjt_images/right_leg_front.jpg', 'fpjt_images/right_leg_side.jpg', 'fpjt_images/right-index.png', 'fpjt_images/s-key.png', 'fpjt_images/sound-icon.png', 'fpjt_images/straight.jpg', 'fpjt_images/torso_left.jpg', 'fpjt_images/torso_right.jpg', 'fpjt_audios/head_down_DE.wav', 'fpjt_audios/head_down_EN.wav', 'fpjt_audios/head_up_DE.wav', 'fpjt_audios/head_up_EN.wav', 'fpjt_audios/left_arm_front_DE.wav', 'fpjt_audios/left_arm_front_EN.wav', 'fpjt_audios/left_arm_side_DE.wav', 'fpjt_audios/left_arm_side_EN.wav', 'fpjt_audios/left_arm_up_DE.wav', 'fpjt_audios/left_arm_up_EN.wav', 'fpjt_audios/left_leg_back_DE.wav', 'fpjt_audios/left_leg_back_EN.wav', 'fpjt_audios/left_leg_front_DE.wav', 'fpjt_audios/left_leg_front_EN.wav', 'fpjt_audios/left_leg_side_DE.wav', 'fpjt_audios/left_leg_side_EN.wav', 'fpjt_audios/press_f_EN.wav', 'fpjt_audios/press_r_EN.wav', 'fpjt_audios/right_arm_front_DE.wav', 'fpjt_audios/right_arm_front_EN.wav', 'fpjt_audios/right_arm_side_DE.wav', 'fpjt_audios/right_arm_side_EN.wav', 'fpjt_audios/right_arm_up_DE.wav', 'fpjt_audios/right_arm_up_EN.wav', 'fpjt_audios/right_leg_back_DE.wav', 'fpjt_audios/right_leg_back_EN.wav', 'fpjt_audios/right_leg_front_DE.wav', 'fpjt_audios/right_leg_front_EN.wav', 'fpjt_audios/right_leg_side_DE.wav', 'fpjt_audios/right_leg_side_EN.wav', 'fpjt_audios/signal_tone.wav', 'fpjt_audios/solution_DE.wav', 'fpjt_audios/solution_EN.wav', 'fpjt_audios/straight_DE.wav', 'fpjt_audios/straight_EN.wav', 'fpjt_audios/testsound_DE.wav', 'fpjt_audios/testsound_EN.wav', 'fpjt_audios/torso_left_DE.wav', 'fpjt_audios/torso_left_EN.wav', 'fpjt_audios/torso_right_DE.wav', 'fpjt_audios/torso_right_EN.wav', 'fpjt_files/Famil_trials.xlsx', 'fpjt_files/Messages.xlsx', 'fpjt_files/Practice_audios.xlsx', 'fpjt_files/Practice_trials.xlsx', 'fpjt_audios/head_down_DE.wav', 'fpjt_audios/head_down_EN.wav', 'fpjt_audios/head_up_DE.wav', 'fpjt_audios/head_up_EN.wav', 'fpjt_audios/left_arm_front_DE.wav', 'fpjt_audios/left_arm_front_EN.wav', 'fpjt_audios/left_arm_side_DE.wav', 'fpjt_audios/left_arm_side_EN.wav', 'fpjt_audios/left_arm_up_DE.wav', 'fpjt_audios/left_arm_up_EN.wav', 'fpjt_audios/left_leg_back_DE.wav', 'fpjt_audios/left_leg_back_EN.wav', 'fpjt_audios/left_leg_front_DE.wav', 'fpjt_audios/left_leg_front_EN.wav', 'fpjt_audios/left_leg_side_DE.wav', 'fpjt_audios/left_leg_side_EN.wav', 'fpjt_audios/press_f_EN.wav', 'fpjt_audios/press_r_EN.wav', 'fpjt_audios/right_arm_front_DE.wav', 'fpjt_audios/right_arm_front_EN.wav', 'fpjt_audios/right_arm_side_DE.wav', 'fpjt_audios/right_arm_side_EN.wav', 'fpjt_audios/right_arm_up_DE.wav', 'fpjt_audios/right_arm_up_EN.wav', 'fpjt_audios/right_leg_back_DE.wav', 'fpjt_audios/right_leg_back_EN.wav', 'fpjt_audios/right_leg_front_DE.wav', 'fpjt_audios/right_leg_front_EN.wav', 'fpjt_audios/right_leg_side_DE.wav', 'fpjt_audios/right_leg_side_EN.wav', 'fpjt_audios/signal_tone.wav', 'fpjt_audios/solution_DE.wav', 'fpjt_audios/solution_EN.wav', 'fpjt_audios/straight_DE.wav', 'fpjt_audios/straight_EN.wav', 'fpjt_audios/testsound_DE.wav', 'fpjt_audios/testsound_EN.wav', 'fpjt_audios/torso_left_DE.wav', 'fpjt_audios/torso_left_EN.wav', 'fpjt_audios/torso_right_DE.wav', 'fpjt_audios/torso_right_EN.wav', 'fpjt_audios/head_down_DE.wav', 'fpjt_audios/head_down_EN.wav', 'fpjt_audios/head_up_DE.wav', 'fpjt_audios/head_up_EN.wav', 'fpjt_audios/left_arm_front_DE.wav', 'fpjt_audios/left_arm_front_EN.wav', 'fpjt_audios/left_arm_side_DE.wav', 'fpjt_audios/left_arm_side_EN.wav', 'fpjt_audios/left_arm_up_DE.wav', 'fpjt_audios/left_arm_up_EN.wav', 'fpjt_audios/left_leg_back_DE.wav', 'fpjt_audios/left_leg_back_EN.wav', 'fpjt_audios/left_leg_front_DE.wav', 'fpjt_audios/left_leg_front_EN.wav', 'fpjt_audios/left_leg_side_DE.wav', 'fpjt_audios/left_leg_side_EN.wav', 'fpjt_audios/press_f_EN.wav', 'fpjt_audios/press_r_EN.wav', 'fpjt_audios/right_arm_front_DE.wav', 'fpjt_audios/right_arm_front_EN.wav', 'fpjt_audios/right_arm_side_DE.wav', 'fpjt_audios/right_arm_side_EN.wav', 'fpjt_audios/right_arm_up_DE.wav', 'fpjt_audios/right_arm_up_EN.wav', 'fpjt_audios/right_leg_back_DE.wav', 'fpjt_audios/right_leg_back_EN.wav', 'fpjt_audios/right_leg_front_DE.wav', 'fpjt_audios/right_leg_front_EN.wav', 'fpjt_audios/right_leg_side_DE.wav', 'fpjt_audios/right_leg_side_EN.wav', 'fpjt_audios/signal_tone.wav', 'fpjt_audios/solution_DE.wav', 'fpjt_audios/solution_EN.wav', 'fpjt_audios/straight_DE.wav', 'fpjt_audios/straight_EN.wav', 'fpjt_audios/testsound_DE.wav', 'fpjt_audios/testsound_EN.wav', 'fpjt_audios/torso_left_DE.wav', 'fpjt_audios/torso_left_EN.wav', 'fpjt_audios/torso_right_DE.wav', 'fpjt_audios/torso_right_EN.wav', 'fpjt_files/Messages.xlsx', 'fpjt_audios/head_down_EN.wav', 'fpjt_audios/head_up_EN.wav', 'fpjt_audios/left_arm_front_EN.wav', 'fpjt_audios/left_arm_side_EN.wav', 'fpjt_audios/left_arm_up_EN.wav', 'fpjt_audios/left_leg_back_EN.wav', 'fpjt_audios/left_leg_front_EN.wav', 'fpjt_audios/left_leg_side_EN.wav', 'fpjt_audios/press_f_EN.wav', 'fpjt_audios/press_r_EN.wav', 'fpjt_audios/right_arm_front_EN.wav', 'fpjt_audios/right_arm_side_EN.wav', 'fpjt_audios/right_arm_up_EN.wav', 'fpjt_audios/right_leg_back_EN.wav', 'fpjt_audios/right_leg_front_EN.wav', 'fpjt_audios/right_leg_side_EN.wav', 'fpjt_audios/signal_tone.wav', 'fpjt_audios/solution_EN.wav', 'fpjt_audios/straight_EN.wav', 'fpjt_audios/testsound_EN.wav', 'fpjt_audios/torso_left_EN.wav', 'fpjt_audios/torso_right_EN.wav', 'Language_localiser.xlsx', 'Messages.xlsx', 'fpjt_files/Famil_trials.xlsx', 'fpjt_files/Practice_trials.xlsx', 'fpjt_files/Testblock_trials.xlsx', 'fpjt_images/31.jpg', 'fpjt_images/32.jpg', 'fpjt_images/33.jpg', 'fpjt_images/34.jpg', 'fpjt_images/35.jpg', 'fpjt_images/36.jpg', 'fpjt_images/37.jpg', 'fpjt_images/38.jpg', 'fpjt_images/41.jpg', 'fpjt_images/42.jpg', 'fpjt_images/43.jpg', 'fpjt_images/44.jpg', 'fpjt_images/45.jpg', 'fpjt_images/46.jpg', 'fpjt_images/47.jpg', 'fpjt_images/48.jpg', 'fpjt_images/51.jpg', 'fpjt_images/52.jpg', 'fpjt_images/53.jpg', 'fpjt_images/54.jpg', 'fpjt_images/55.jpg', 'fpjt_images/56.jpg', 'fpjt_images/57.jpg', 'fpjt_images/58.jpg', 'fpjt_images/61.jpg', 'fpjt_images/62.jpg', 'fpjt_images/63.jpg', 'fpjt_images/64.jpg', 'fpjt_images/65.jpg', 'fpjt_images/66.jpg', 'fpjt_images/67.jpg', 'fpjt_images/68.jpg', 'fpjt_images/close-eyes.png', 'fpjt_images/g-key.png', 'fpjt_images/head_down.jpg', 'fpjt_images/head_up.jpg', 'fpjt_images/h-key.png', 'fpjt_images/instr_img1.jpg', 'fpjt_images/instr_img2.jpg', 'fpjt_images/left_arm_front.jpg', 'fpjt_images/left_arm_side.jpg', 'fpjt_images/left_arm_up.jpg', 'fpjt_images/left_leg_back.jpg', 'fpjt_images/left_leg_front.jpg', 'fpjt_images/left_leg_side.jpg', 'fpjt_images/left-index.png', 'fpjt_images/l-key.png', 'fpjt_images/practice1.jpg', 'fpjt_images/practice2.jpg', 'fpjt_images/practice3.jpg', 'fpjt_images/practice4.jpg', 'fpjt_images/right_arm_front.jpg', 'fpjt_images/right_arm_side.jpg', 'fpjt_images/right_arm_up.jpg', 'fpjt_images/right_leg_back.jpg', 'fpjt_images/right_leg_front.jpg', 'fpjt_images/right_leg_side.jpg', 'fpjt_images/right-index.png', 'fpjt_images/s-key.png', 'fpjt_images/straight.jpg', 'fpjt_images/torso_left.jpg', 'fpjt_images/torso_right.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1500, 1000]
  color = 0.7500, 0.7500, 0.7500
  expName = FPJT
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine bye
    RoutineSettingsComponent bye
      stopVal [duration (s)] = 5
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    TextComponent bye_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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    CodeComponent show_mouse
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor = 'auto';
  Routine load_language
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    CodeComponent update_language_code
      Code Type = Auto->JS
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      Begin Experiment:
        ### DISABLE EXPERIMENT SETTINGS AND SET DEFAULT ###
        # 1) set default here (needs to be an ISO code from Language_localiser.xlsx)
        lang_code = "EN"
        # 2) comment out lines 2-3 in "Begin routine" tab of this code component
        # 3) Go to the "Experiment settings" and delete the "Experiment info" field for "language"
      Begin Routine:
        # we update the language code based on the language localiser variable ISO_code
        if language == expInfo['language']: # comment out to set default in "Begin experiment" tab
            lang_code = ISO_code            # "

        thisExp.addData("language_code", lang_code)  # add it to output
  Routine update_message
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    CodeComponent update_message_code
      Code Type = Both
      Begin JS Routine:
        // change code that does not auto-translate correctly
        // we use window instead of globals()
        // to create the global variables
        // the rest is the same

        let row = update_message_loop.getCurrentTrial();
        let msg_name = String(row["message"]).trim();
        let msg_value = String(row[lang_code]);

        window[msg_name] = msg_value;
      Begin Routine:
        # now that we have selected our new language (lang_code)
        # we can use a loop to iterate over the messages
        # every iteration, we're gonna update the value of our
        # global variables with the value corresponding to the
        # lang_code (ISO_code from the language localiser)
        # this way we don't need to manually specify the text

        # this iteration, select the message
        msg_name = message  # e.g. variable "welcome_msg"
        # for this iteration, assign the value based on code
        msg_value = eval(lang_code) # e.g. "Bienvenido" if lang_code = "ES"
        # update message based on code
        globals()[msg_name] = msg_value  # e.g. should update the value of welcome_msg by "Bienvenido"
  Routine experiment_settings
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    CodeComponent response_mode
      Code Type = Auto->JS
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      Begin Experiment:
        # set default response mode here ("Both hands", "Left hand" or "Right hand")
        selected_response_mode = "Both hands"

        # add to output
        thisExp.addData("selected_response_mode", selected_response_mode)
    CodeComponent feedback
      Code Type = Auto->JS
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      Begin Experiment:
        # set default feedback here ("Yes" or "No feedback in testblock")
        selected_feedback = "No feedback in testblock"

        # add to output
        thisExp.addData("selected_feedback", selected_feedback)
  Routine welcome
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    TextComponent adv_text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_key_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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
  Routine task_instruction_1
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    TextComponent task_instr_text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instr_msg_1
      wrapWidth = 1.3
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    ImageComponent left_key
      image [set every repeat] = $left_key_image
      pos = (-0.3, -0.34)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent right_key
      image [set every repeat] = $right_key_image
      pos = (0.3, -0.34)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    TextComponent adv_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 11
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 11
      store = nothing
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  Routine helper
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    CodeComponent helper_code
      Code Type = Both
      Begin Experiment:
        # initialize variables
        task_instr_msg_1 = ""
        task_instr_msg_3 = ""
        left_key_image = ""
        right_key_image = ""
        no_feedback_text = ""
        allowed_keys = ["g", "h"]
      Begin JS Experiment:
        task_instr_msg_1 = "";
        task_instr_msg_3 = "";
        left_key_image = "";
        right_key_image = "";
        no_feedback_text = "";
        allowed_keys = ["g", "h"];
      Begin JS Routine:
        left_key_image = "fpjt_images/g-key.png";
        right_key_image = "fpjt_images/h-key.png";

        if ((selected_feedback === "No feedback in testblock")){
            no_feedback_text = no_feedback_msg;
        }

        if ((selected_response_mode === "Both hands")) {
            task_instr_msg_1 = task_instr_msg_1_bimanual;
            task_instr_msg_3 = task_instr_msg_3_bimanual;
            left_key_image = "fpjt_images/s-key.png";
            right_key_image = "fpjt_images/l-key.png";
            allowed_keys = ["s", "l"];
        } else {
            if ((selected_response_mode === "Right hand")) {
                task_instr_msg_1 = task_instr_msg_1_right;
                task_instr_msg_3 = task_instr_msg_3_right;
            } else {
                if ((selected_response_mode === "Left hand")) {
                    task_instr_msg_1 = task_instr_msg_1_left;
                    task_instr_msg_3 = task_instr_msg_3_left;
                }
            }
        }
      Begin Routine:
        left_key_image = "fpjt_images/g-key.png"
        right_key_image = "fpjt_images/h-key.png"

        if selected_feedback == "No feedback in testblock":
            no_feedback_text = no_feedback_msg

        if selected_response_mode == "Both hands":
            task_instr_msg_1 = task_instr_msg_1_bimanual
            task_instr_msg_3 = task_instr_msg_3_bimanual
            left_key_image = "fpjt_images/s-key.png"
            right_key_image = "fpjt_images/l-key.png"
            allowed_keys = ["s", "l"]
        elif selected_response_mode == "Right hand":
            task_instr_msg_1 = task_instr_msg_1_right
            task_instr_msg_3 = task_instr_msg_3_right
        elif selected_response_mode == "Left hand":
            task_instr_msg_1 = task_instr_msg_1_left
            task_instr_msg_3 = task_instr_msg_3_left
  Routine task_instruction_2
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    TextComponent task_instr_text_2a
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instr_msg_2a
      wrapWidth = 1.3
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    TextComponent task_instr_text_2b
      color = 1.0000, 0.0000, -1.0000
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instr_msg_2b
      wrapWidth = 0.8
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    TextComponent task_instr_text_2c
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instr_msg_2c
      wrapWidth = 1.3
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    ImageComponent instr_img_left
      image [set every repeat] = fpjt_images/instr_img1.jpg
      pos = (-0.53, -0.03)
      saveStartStop = False
      size = (0.2375, 0.3355)
      startVal [time (s)] = 0.0
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    ImageComponent instr_img_right
      image [set every repeat] = fpjt_images/instr_img2.jpg
      pos = (0.53, -0.03)
      saveStartStop = False
      size = (0.2375, 0.3355)
      startVal [time (s)] = 0.0
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    TextComponent adv_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 11
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_key_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 11
      store = nothing
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  Routine CC_feedback
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    TextComponent CC_feedback_text
      color = 0.9500, -0.0696, -1.0000
      letterHeight = 0.055
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_feedback_msg
      wrapWidth = 1.3
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    TextComponent CC_error_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_error_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_key_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent adv_text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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
  Routine CC
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        # initialize variables
        CC_answer = 0
        CC_error_msg = ""
        CC_feedback_msg = ""
        CC_attempt = 0
      Begin JS Experiment:
        // initialize variables
        CC_answer = 0;
        CC_error_msg = "";
        CC_feedback_msg = "";
        CC_attempt = 0;
        continueLoop = 1;
        // hide mouse
        document.body.style.cursor = 'none';
      Begin JS Routine:
        CC_instr_txt_1.anchor = 'left';
        CC_instr_txt_2.anchor = 'left';
        CC_option_A_txt.anchor = 'left';
        CC_option_B_txt.anchor = 'left';
        CC_option_C_txt.anchor = 'left';
        CC_option_D_txt.anchor = 'left';
        CC_option_E_txt.anchor = 'left';
        CC_option_F_txt.anchor = 'left';

        // state: 0 = white; 1 = black
        poly_A_state = 0;
        poly_B_state = 0;
        poly_C_state = 0;
        poly_D_state = 0;
        poly_E_state = 0;
        poly_F_state = 0;

        // left mouse button pressed in last frame?
        _prevLeft = 0;

        // show mouse
        document.body.style.cursor = 'auto';
      Begin Routine:
        CC_instr_txt_1.alignText = 'left'
        CC_instr_txt_2.alignText = 'left'
        CC_option_A_txt.alignText = 'left'
        CC_option_B_txt.alignText = 'left'
        CC_option_C_txt.alignText = 'left'
        CC_option_D_txt.alignText = 'left'
        CC_option_E_txt.alignText = 'left'
        CC_option_F_txt.alignText = 'left'

        # state: 0 = white (not selected), 1 = black (selected)
        poly_A_state = 0
        poly_B_state = 0
        poly_C_state = 0
        poly_D_state = 0
        poly_E_state = 0
        poly_F_state = 0

        # Remember whether the left mouse button was pressed in the last frame
        _prevLeft = 0

        # show mouse
        win.mouseVisible = True
      Each Frame:
        left = mouse.getPressed()[0]

        # Toggle nur beim "neu gedrückten" Klick (nicht beim Gedrückthalten)
        if left and not _prevLeft:
            if mouse.isPressedIn(poly_A):
                poly_A_state = 1 - poly_A_state
            if mouse.isPressedIn(poly_B):
                poly_B_state = 1 - poly_B_state
            if mouse.isPressedIn(poly_C):
                poly_C_state = 1 - poly_C_state
            if mouse.isPressedIn(poly_D):
                poly_D_state = 1 - poly_D_state
            if mouse.isPressedIn(poly_E):
                poly_E_state = 1 - poly_E_state
            if mouse.isPressedIn(poly_F):
                poly_F_state = 1 - poly_F_state

        # Darstellung aus den Zuständen ableiten
        poly_A.setFillColor('black' if poly_A_state else 'white')
        poly_B.setFillColor('black' if poly_B_state else 'white')
        poly_C.setFillColor('black' if poly_C_state else 'white')
        poly_D.setFillColor('black' if poly_D_state else 'white')
        poly_E.setFillColor('black' if poly_E_state else 'white')
        poly_F.setFillColor('black' if poly_F_state else 'white')

        _prevLeft = left
      Each JS Frame:
        // linker Mausbutton (0 = nicht gedrückt, 1 = gedrückt)
        let left = mouse.getPressed()[0];

        // Toggle nur beim NEUEN Klick
        if (left && !_prevLeft) {

            if (mouse.isPressedIn(poly_A)) {
                poly_A_state = 1 - poly_A_state;
            }
            if (mouse.isPressedIn(poly_B)) {
                poly_B_state = 1 - poly_B_state;
            }
            if (mouse.isPressedIn(poly_C)) {
                poly_C_state = 1 - poly_C_state;
            }
            if (mouse.isPressedIn(poly_D)) {
                poly_D_state = 1 - poly_D_state;
            }
            if (mouse.isPressedIn(poly_E)) {
                poly_E_state = 1 - poly_E_state;
            }
            if (mouse.isPressedIn(poly_F)) {
                poly_F_state = 1 - poly_F_state;
            }
        }

        // Darstellung aus Zustand ableiten
        poly_A.setFillColor(poly_A_state ? 'black' : 'white');
        poly_B.setFillColor(poly_B_state ? 'black' : 'white');
        poly_C.setFillColor(poly_C_state ? 'black' : 'white');
        poly_D.setFillColor(poly_D_state ? 'black' : 'white');
        poly_E.setFillColor(poly_E_state ? 'black' : 'white');
        poly_F.setFillColor(poly_F_state ? 'black' : 'white');

        // aktuellen Zustand merken
        _prevLeft = left;
      End JS Routine:
        // 1 = schwarz ausgewählt, 0 = weiß nicht ausgewählt
        poly_A_clicked = poly_A_state;
        poly_B_clicked = poly_B_state;
        poly_C_clicked = poly_C_state;
        poly_D_clicked = poly_D_state;
        poly_E_clicked = poly_E_state;
        poly_F_clicked = poly_F_state;

        // evaluate answer
        CC_answer = (
          poly_C_state === 1 &&
          poly_D_state === 1 &&
          poly_F_state === 1
        ) ? 1 : 0;

        if ((CC_answer === 1)) {
            CC_feedback_msg = feedback_correct_msg;
            CC_error_msg = "";
            CC_loop.finished = true;
        } else {
            if ((CC_answer === 0)) {
                CC_feedback_msg = feedback_incorrect_msg;
                CC_error_msg = CC_error;
                CC_loop.finished = false;
            }
        }

        // count attempts
        CC_attempt += 1

        // show mouse
        document.body.style.cursor = 'none';

        // log
        psychoJS.experiment.addData('poly_A_state', poly_A_state);
        psychoJS.experiment.addData('poly_B_state', poly_B_state);
        psychoJS.experiment.addData('poly_C_state', poly_C_state);
        psychoJS.experiment.addData('poly_D_state', poly_D_state);
        psychoJS.experiment.addData('poly_E_state', poly_E_state);
        psychoJS.experiment.addData('poly_F_state', poly_F_state);
        psychoJS.experiment.addData('CC_answer', CC_answer);
        psychoJS.experiment.addData('CC_attempt', CC_attempt);
      End Routine:
        # Genau das, was du brauchst: 1 wenn am Ende schwarz, sonst 0
        poly_A_clicked = int(poly_A_state)
        poly_B_clicked = int(poly_B_state)
        poly_C_clicked = int(poly_C_state)
        poly_D_clicked = int(poly_D_state)
        poly_E_clicked = int(poly_E_state)
        poly_F_clicked = int(poly_F_state)

        # evaluate answer
        CC_answer = 1 if (poly_C_state == 1 and poly_D_state == 1 and poly_F_state == 1) else 0

        if CC_answer == 1:
            CC_feedback_msg = feedback_correct_msg
            CC_error_msg = ""
            CC_loop.finished = True
        elif CC_answer == 0:
            CC_feedback_msg = feedback_incorrect_msg
            CC_error_msg = CC_error
            CC_loop.finished = False

        # count attempts
        CC_attempt += 1

        # show mouse
        win.mouseVisible = False

        # log
        thisExp.addData('poly_A_state', poly_A_state)
        thisExp.addData('poly_B_state', poly_B_state)
        thisExp.addData('poly_C_state', poly_C_state)
        thisExp.addData('poly_D_state', poly_D_state)
        thisExp.addData('poly_E_state', poly_E_state)
        thisExp.addData('poly_F_state', poly_F_state)
        thisExp.addData('CC_answer', CC_answer)
        thisExp.addData('CC_attempt', CC_attempt)
    KeyboardComponent adv_key_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent adv_text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
      wrapWidth = 1.75
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    TextComponent CC_instr_txt_1
      color = 1.0000, -0.0020, -1.0000
      letterHeight = 0.033
      pos = (-.6, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_instr_msg_1
      wrapWidth = 1.3
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    TextComponent CC_instr_txt_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (-.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_instr_msg_2
      wrapWidth = 1.3
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    TextComponent CC_option_A_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (-.5, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_option_A
      wrapWidth = 1.15
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    TextComponent CC_option_B_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (-.5, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_option_B
      wrapWidth = 1.15
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    TextComponent CC_option_C_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (-.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_option_C
      wrapWidth = 1.15
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    TextComponent CC_option_D_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (-.5, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_option_D
      wrapWidth = 1.15
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    TextComponent CC_option_E_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (-.5, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_option_E
      wrapWidth = 1.15
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    TextComponent CC_option_F_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (-.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CC_option_F
      wrapWidth = 1.15
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    PolygonComponent poly_A
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, .2)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent poly_B
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, .1)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent poly_C
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, 0)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent poly_D
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, -.1)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent poly_E
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, -.2)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent poly_F
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, -.3)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine pract_instruction
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    TextComponent pract_instr_text
      color = 1.0000, -0.0020, -1.0000
      letterHeight = 0.045
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pract_instr_msg
      wrapWidth = 1.3
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    TextComponent tsk_instr_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instr_msg_3
      wrapWidth = 1.3
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    ImageComponent left_key_5
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_5
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent no_text_4
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_4
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    TextComponent adv_text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 5
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_key_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine start_testbl
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    TextComponent testbl_instr_text
      color = 1.0000, -0.0020, -1.0000
      letterHeight = 0.045
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $testbl_instr_msg
      wrapWidth = 1.3
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    TextComponent no_feedback_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $no_feedback_text
      wrapWidth = 1.3
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    TextComponent tsk_instr_text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instr_msg_3
      wrapWidth = 1.3
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    TextComponent no_text_3
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_3
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_7
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_7
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent adv_text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 3
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_key_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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  Routine reminder
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    TextComponent reminder_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $reminder_msg
      wrapWidth = 1.3
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    ImageComponent left_key_6
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_6
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent no_text_2
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_2
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    TextComponent adv_text_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 6
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_key_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 6
      store = nothing
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  Routine trial_instr
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    CodeComponent trial_instr_code
      Code Type = Both
      Begin Experiment:
        audio_counter = 0
        current_instr_audio = ""
      Begin JS Experiment:
        audio_counter = 0;
        current_instr_audio = "";
      Begin JS Routine:
        // current row from the INNER audio loop (conditions: Testblock_audios.xlsx)
        let row = trial_instr_loop.getCurrentTrial();

        // column name comes from OUTER loop (e.g., item)
        let current_column = item;

        // fetch audio stem from this row/column
        if (!(current_column in row)) {
          throw new Error("Audio table missing column: " + current_column);
        }
        let audioStem = row[current_column];
        if (audioStem === undefined || audioStem === null || String(audioStem).trim() === "") {
          throw new Error("Missing audio stem for column '" + current_column + "' in current audio row");
        }

        // build final path
        current_instr_audio = "fpjt_audios/" + String(audioStem).trim() + "_" + String(lang_code) + ".wav";


        //
        if ((trial_instr_loop.thisN === 0)) {
            audio_counter = 0;
        }
        if ((audio_counter === (n_audios - 1))) {
            trial_instr_loop.finished = true;
        }
      Begin Routine:
        current_column = item
        current_instr_audio = "fpjt_audios/" + str(eval(current_column)) + "_" + str(lang_code) + ".wav"

        # initialize counter at beginning of loops
        if trial_instr_loop.thisN == 0:
            audio_counter = 0

        # check if n_audios is reached
        if audio_counter == n_audios - 1:
            # stop loop
            trial_instr_loop.finished = True
      End JS Routine:
        audio_counter += 1;
      End Routine:
        # increment counter if audio was played
        audio_counter += 1
    TextComponent no_text_7
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_7
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_10
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_10
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent white_rect_4
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent close_eyes_4
      image = fpjt_images/close-eyes.png
      saveStartStop = False
      size = (0.564, 0.1505)
      startVal [time (s)] = 0.0
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    TextComponent close_eyes_text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $close_eyes_msg
      wrapWidth = 1.3
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    SoundComponent instr_audio
      forceEndRoutine = True
      saveStartStop = False
      sound [set every repeat] = $current_instr_audio
      startVal [time (s)] = 0.3
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine pause_betw_instr
    RoutineSettingsComponent pause_betw_instr
      stopVal [duration (s)] = 1.6
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    TextComponent no_text_8
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_8
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_11
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_11
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent white_rect_5
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent close_eyes_5
      image = fpjt_images/close-eyes.png
      saveStartStop = False
      size = (0.564, 0.1505)
      startVal [time (s)] = 0.0
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    TextComponent close_eyes_text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $close_eyes_msg
      wrapWidth = 1.3
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  Routine trial_open_eyes
    RoutineSettingsComponent trial_open_eyes
      saveStartStop = False
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    TextComponent no_text_9
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_9
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_12
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_12
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent fixcross
      fillColor = black
      lineColor = black
      lineWidth = 0
      saveStartStop = False
      shape = cross
      size = (0.022, 0.022)
      startVal [time (s)] = 0.0
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    SoundComponent tone_open_eyes
      forceEndRoutine = True
      saveStartStop = False
      sound [set every repeat] = fpjt_audios/signal_tone.wav
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.33
      stopWithRoutine = False
      syncScreenRefresh = False
      volume = 1.5
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  Routine start_trial
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    TextComponent no_text_5
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_5
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_8
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_8
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent white_rect_2
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent close_eyes_2
      image = fpjt_images/close-eyes.png
      saveStartStop = False
      size = (0.564, 0.1505)
      startVal [time (s)] = 0.0
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    TextComponent close_eyes_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $close_eyes_msg
      wrapWidth = 1.3
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    TextComponent start_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $start_msg
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    TextComponent trial_counter
      color = 1.0000, -0.0520, -1.0000
      letterHeight = 0.05
      pos = (0, .37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials_loop.thisN + 1) + " / 16"
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    KeyboardComponent adv_key_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine trial_response
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_key = ""
      Begin Routine:
        # column from conditions file to get correct responses
        correct_key = correct_one

        if selected_response_mode == "Both hands":
            correct_key = correct_both
    TextComponent no_text_11
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_11
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_14
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_14
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent visual_stimulus
      image [set every repeat] = $fpjt_image
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys = allowed_keys
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine trial_fixcross
    RoutineSettingsComponent trial_fixcross
      saveStartStop = False
      stopVal [duration (s)] = 1.9
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    TextComponent no_text_10
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_10
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_13
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_13
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent fixcross_2
      fillColor = black
      lineColor = black
      lineWidth = 0
      saveStartStop = False
      shape = cross
      size = (0.022, 0.022)
      startVal [time (s)] = 0.0
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  Routine trial_feedback
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        trial_feedback_msg = ""
      Begin Routine:
        if selected_feedback == "Yes":
            continueRoutine = True
        else:
            continueRoutine = False

        if response.corr == 1:
            trial_feedback_msg = feedback_correct_msg + "\n\n\n" + str(round(response.rt, 2)) + " s"
        elif response.corr == 0:
            trial_feedback_msg = feedback_incorrect_msg + "\n\n\n" + str(round(response.rt, 2)) + " s"
    TextComponent feedback_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
      text [set every repeat] = $trial_feedback_msg
      wrapWidth = 1.3
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  Routine start_trial_pr
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    TextComponent no_text_12
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_12
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_15
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_15
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent white_rect_6
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent close_eyes_6
      image = fpjt_images/close-eyes.png
      saveStartStop = False
      size = (0.564, 0.1505)
      startVal [time (s)] = 0.0
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    TextComponent close_eyes_text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $close_eyes_msg
      wrapWidth = 1.3
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    TextComponent start_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $start_msg
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    KeyboardComponent adv_key_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine trial_instr_pr
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    CodeComponent trial_instr_code_pr
      Code Type = Both
      Begin Experiment:
        audio_counter = 0
        current_instr_audio = ""
      Begin JS Experiment:
        audio_counter = 0;
        current_instr_audio = "";
      Begin JS Routine:
        // current row from the INNER audio loop (conditions: Testblock_audios.xlsx)
        let row = trial_instr_loop_pr.getCurrentTrial();

        // column name comes from OUTER loop (e.g., item)
        let current_column = item;

        // fetch audio stem from this row/column
        if (!(current_column in row)) {
          throw new Error("Audio table missing column: " + current_column);
        }
        let audioStem = row[current_column];
        if (audioStem === undefined || audioStem === null || String(audioStem).trim() === "") {
          throw new Error("Missing audio stem for column '" + current_column + "' in current audio row");
        }

        // build final path
        current_instr_audio = "fpjt_audios/" + String(audioStem).trim() + "_" + String(lang_code) + ".wav";

        //
        if ((trial_instr_loop_pr.thisN === 0)) {
            audio_counter = 0;
        }
        if ((audio_counter === (n_audios - 1))) {
            trial_instr_loop_pr.finished = true;
        }
      Begin Routine:
        current_column = item
        current_instr_audio = "fpjt_audios/" + str(eval(current_column)) + "_" + str(lang_code) + ".wav"

        # initialize counter at beginning of loops
        if trial_instr_loop_pr.thisN == 0:
            audio_counter = 0

        # check if n_audios is reached
        if audio_counter == n_audios - 1:
            # stop loop
            trial_instr_loop_pr.finished = True
      End JS Routine:
        audio_counter += 1;
      End Routine:
        # increment counter if audio was played
        audio_counter += 1
    TextComponent no_text_13
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_13
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_16
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_16
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent white_rect_7
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent close_eyes_7
      image = fpjt_images/close-eyes.png
      saveStartStop = False
      size = (0.564, 0.1505)
      startVal [time (s)] = 0.0
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    TextComponent close_eyes_text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $close_eyes_msg
      wrapWidth = 1.3
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    SoundComponent instr_audio_pr
      forceEndRoutine = True
      saveStartStop = False
      sound [set every repeat] = $current_instr_audio
      startVal [time (s)] = 0.3
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine pause_betw_instr_pr
    RoutineSettingsComponent pause_betw_instr_pr
      stopVal [duration (s)] = 1.6
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    TextComponent no_text_14
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_14
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_17
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_17
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent white_rect_8
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent close_eyes_8
      image = fpjt_images/close-eyes.png
      saveStartStop = False
      size = (0.564, 0.1505)
      startVal [time (s)] = 0.0
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    TextComponent close_eyes_text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $close_eyes_msg
      wrapWidth = 1.3
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  Routine trial_open_eyes_pr
    RoutineSettingsComponent trial_open_eyes_pr
      saveStartStop = False
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    TextComponent no_text_15
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_15
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_18
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_18
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent fixcross_3
      fillColor = black
      lineColor = black
      lineWidth = 0
      saveStartStop = False
      shape = cross
      size = (0.022, 0.022)
      startVal [time (s)] = 0.0
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    SoundComponent tone_open_eyes_pr
      forceEndRoutine = True
      saveStartStop = False
      sound [set every repeat] = fpjt_audios/signal_tone.wav
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.33
      stopWithRoutine = False
      syncScreenRefresh = False
      volume = 1.5
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  Routine trial_fixcross_pr
    RoutineSettingsComponent trial_fixcross_pr
      saveStartStop = False
      stopVal [duration (s)] = 1.9
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    TextComponent no_text_16
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_16
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_19
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_19
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent fixcross_4
      fillColor = black
      lineColor = black
      lineWidth = 0
      saveStartStop = False
      shape = cross
      size = (0.022, 0.022)
      startVal [time (s)] = 0.0
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  Routine trial_response_pr
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    CodeComponent trial_code_pr
      Code Type = Auto->JS
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      Begin Experiment:
        correct_key = ""
      Begin Routine:
        # column from conditions file to get correct responses
        correct_key = correct_one

        if selected_response_mode == "Both hands":
            correct_key = correct_both
    TextComponent no_text_17
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (-.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $no_msg
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    TextComponent yes_text_17
      color = -0.5000, -0.5000, -0.5000
      letterHeight = 0.025
      pos = (.55, -.43)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $yes_msg
      wrapWidth = 1.75
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    ImageComponent left_key_20
      image [set every repeat] = $left_key_image
      opacity = 0.75
      pos = (-0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_20
      image [set every repeat] = $right_key_image
      opacity = 0.75
      pos = (0.5, -0.44)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent visual_stimulus_pr
      image [set every repeat] = $fpjt_image
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent response_pr
      allowedKeys = allowed_keys
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine trial_feedback_pr
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    CodeComponent feedback_code_pr
      Code Type = Auto->JS
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      Begin Experiment:
        trial_feedback_msg = ""
      Begin Routine:
        if response_pr.corr == 1:
            trial_feedback_msg = feedback_correct_msg + "\n\n\n" + str(round(response_pr.rt, 2)) + " s"
        elif response_pr.corr == 0:
            trial_feedback_msg = feedback_incorrect_msg + "\n\n\n" + str(round(response_pr.rt, 2)) + " s"
    TextComponent feedback_text_pr
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      syncScreenRefresh = False
      text [set every repeat] = $trial_feedback_msg
      wrapWidth = 1.3
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  Routine famil_instruction
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    TextComponent famil_instr_text
      color = -1,-1,-1
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fam_msg_1a
      wrapWidth = 1.3
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    TextComponent famil_instr_text_2
      color = -1,-1,-1
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fam_msg_1b
      wrapWidth = 1.3
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    ImageComponent straight_position
      image = fpjt_images/straight.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent adv_text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 4
      text [set every repeat] = $adv_msg
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    KeyboardComponent adv_key_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      store = nothing
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
  Routine famil_trial
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    CodeComponent famil_code
      Code Type = Both
      Begin Experiment:
        famil_selected = ""
        famil_answer = 0
      Begin JS Experiment:
        famil_selected = "";
        famil_answer = 0;
      Begin JS Routine:
        // show mouse
        document.body.style.cursor = 'auto';

        // show response options (lookup from window globals created earlier)
        function lookup_global(name) {
          name = String(name).trim();
          if (!(name in window)) {
            throw new Error("Message key not found on window: " + name);
          }
          return window[name];
        }

        famil_optA_msg = lookup_global(famil_optionA);
        famil_optB_msg = lookup_global(famil_optionB);
        famil_optC_msg = lookup_global(famil_optionC);
        famil_optD_msg = lookup_global(famil_optionD);

        // text alignment
        famil_instr_txt_2.anchor = 'left';
        famil_optA.anchor = 'left';
        famil_optB.anchor = 'left';
        famil_optC.anchor = 'left';
        famil_optD.anchor = 'left';

        // reset visuals
        familpoly_A.fillColor = "white";
        familpoly_B.fillColor = "white";
        familpoly_C.fillColor = "white";
        familpoly_D.fillColor = "white";

        // response bookkeeping
        famil_selected = null;
        tSelected = null;

        // reset mouse click state
        famil_mouse.clickReset();

        // helper for audio in feedback
        announce_solution_audio = "fpjt_audios/solution_" + String(lang_code) + ".wav";
        famil_solution_audio = "fpjt_audios/" + String(famil_solution) + "_" + String(lang_code) + ".wav";
      Begin Routine:
        # show response options
        def lookup_global(name):
            name = str(name).strip()
            return globals().get(name, name)

        famil_optA_msg = lookup_global(famil_optionA)
        famil_optB_msg = lookup_global(famil_optionB)
        famil_optC_msg = lookup_global(famil_optionC)
        famil_optD_msg = lookup_global(famil_optionD)

        # text alignment
        famil_instr_txt_2.alignText = 'left'
        famil_optA.alignText = 'left'
        famil_optB.alignText = 'left'
        famil_optC.alignText = 'left'
        famil_optD.alignText = 'left'

        # reset visuals
        familpoly_A.fillColor = "white"
        familpoly_B.fillColor = "white"
        familpoly_C.fillColor = "white"
        familpoly_D.fillColor = "white"

        # response bookkeeping
        famil_selected = None
        tSelected = None

        # reset mouse click state (prevents carry-over click)
        famil_mouse.clickReset()

        # helper for audio in feedback
        announce_solution_audio = "fpjt_audios/solution_" + str(lang_code) + ".wav"
        famil_solution_audio = "fpjt_audios/" + str(famil_solution) + "_" + str(lang_code) + ".wav"
      Each Frame:
        # show mouse after 200ms
        if t >= 0.2:
            win.mouseVisible = True

        # evaluate click
        if famil_selected is None:
            buttons = famil_mouse.getPressed()  # [left, middle, right]
            if buttons[0]:  # left click
                if famil_mouse.isPressedIn(familpoly_A):
                    famil_selected = "A"
                    familpoly_A.fillColor = "black"
                    tSelected = t
                elif famil_mouse.isPressedIn(familpoly_B):
                    famil_selected = "B"
                    familpoly_B.fillColor = "black"
                    tSelected = t
                elif famil_mouse.isPressedIn(familpoly_C):
                    famil_selected = "C"
                    familpoly_C.fillColor = "black"
                    tSelected = t
                elif famil_mouse.isPressedIn(familpoly_D):
                    famil_selected = "D"
                    familpoly_D.fillColor = "black"
                    tSelected = t
        else:
            # wait 500ms with black circle, then advance
            if (t - tSelected) >= 0.5:
                continueRoutine = False
      Each JS Frame:
        // show mouse
        if (t >= 0.2) {
          document.body.style.cursor = 'auto';
        }

        // evaluate click
        if (famil_selected === null) {
          let buttons = famil_mouse.getPressed(); // [left, middle, right]
          if (buttons[0]) { // left click
            if (famil_mouse.isPressedIn(familpoly_A)) {
              famil_selected = "A";
              familpoly_A.fillColor = "black";
              tSelected = t;
            } else if (famil_mouse.isPressedIn(familpoly_B)) {
              famil_selected = "B";
              familpoly_B.fillColor = "black";
              tSelected = t;
            } else if (famil_mouse.isPressedIn(familpoly_C)) {
              famil_selected = "C";
              familpoly_C.fillColor = "black";
              tSelected = t;
            } else if (famil_mouse.isPressedIn(familpoly_D)) {
              famil_selected = "D";
              familpoly_D.fillColor = "black";
              tSelected = t;
            }
          }
        } else {
          // wait 500ms with black circle, then advance
          if ((t - tSelected) >= 0.5) {
            continueRoutine = false;
          }
        }
      End JS Routine:
        // correctness (0/1)
        famil_answer = (famil_selected === famil_option_solution) ? 1 : 0;

        if (famil_answer === 1) {
          famil_feedback_msg = feedback_correct_msg;
        } else if (famil_answer === 0) {
          famil_feedback_msg = feedback_incorrect_msg;
        }

        // save data
        psychoJS.experiment.addData("famil_selected", famil_selected);
        psychoJS.experiment.addData("famil_answer", famil_answer);

        // hide mouse
        document.body.style.cursor = 'none';
      End Routine:
        # correctness (0/1)
        famil_answer = int(famil_selected == famil_option_solution)

        if famil_answer == 1:
            famil_feedback_msg = feedback_correct_msg
        elif famil_answer == 0:
            famil_feedback_msg = feedback_incorrect_msg

        # save data
        thisExp.addData("famil_selected", famil_selected)
        thisExp.addData("famil_answer", famil_answer)

        # hide mouse
        win.mouseVisible = False
    ImageComponent famil_trial_image
      image [set every repeat] = $famil_image
      pos = (0, 0.23)
      saveStartStop = False
      size = (0.54, 0.54)
      startVal [time (s)] = 0.0
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    TextComponent famil_instr_txt_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (-.6, -.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fam_msg_2
      wrapWidth = 1.3
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    TextComponent famil_optA
      color = black
      letterHeight = 0.033
      pos = (-.5, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $famil_optA_msg
      wrapWidth = 1.15
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    TextComponent famil_optB
      color = black
      letterHeight = 0.033
      pos = (-.5, -.28)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $famil_optB_msg
      wrapWidth = 1.15
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    TextComponent famil_optC
      color = black
      letterHeight = 0.033
      pos = (-.5, -.36)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $famil_optC_msg
      wrapWidth = 1.15
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    TextComponent famil_optD
      color = black
      letterHeight = 0.033
      pos = (-.5, -.44)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $famil_optD_msg
      wrapWidth = 1.15
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    PolygonComponent familpoly_A
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, -.2)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent familpoly_B
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, -.28)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent familpoly_C
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, -.36)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent familpoly_D
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.55, -.44)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent famil_mouse
      clickable = familpoly_A, familpoly_B, familpoly_C, familpoly_D 
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.2
      timeRelativeTo = routine
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  Routine famil_feedback
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    ImageComponent famil_trial_image_2
      image [set every repeat] = $famil_image
      pos = (0, 0.23)
      saveStartStop = False
      size = (0.54, 0.54)
      startVal [time (s)] = 0.0
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    TextComponent famil_feedback_text
      color = 0.9500, -0.0696, -1.0000
      letterHeight = 0.055
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $famil_feedback_msg
      wrapWidth = 1.3
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    SoundComponent announce_solution_sound
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $announce_solution_audio
      startVal [time (s)] = 0.3
      syncScreenRefresh = False
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    SoundComponent famil_solution_sound
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $famil_solution_audio
      startVal [time (s)] = 2.7
      syncScreenRefresh = False
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    TextComponent adv_text_14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 5.2
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_key_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.2
      store = nothing
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  Routine play_test_sound
    RoutineSettingsComponent play_test_sound
      stopVal [duration (s)] = 13
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    CodeComponent end_test_sound_loop
      Code Type = Both
      End JS Routine:
        if (adv_key_17.keys === "space") {
          play_test_sound_loop.finished = true;
        }
      End Routine:
        if adv_key_17.keys == "space":
            play_test_sound_loop.finished = True
    SoundComponent test_sound_str
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $test_sound_audio
      startVal [time (s)] = 0.2
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    TextComponent vol_calib_text_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $volume_calib_msg
      wrapWidth = 1.3
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    ImageComponent sound_image_right_2
      image = fpjt_images/sound-icon.png
      pos = (0.35,-.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sound_image_left_2
      image = fpjt_images/sound-icon.png
      pos = (-0.35,-.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent testsound_button_2
      autoLog = False
      bold = False
      borderColor = -1,-1,-1
      borderWidth = 3
      color = -1,-1,-1
      contrast = 0.6
      editable = False
      fillColor = 1.0000, 0.0980, -1.0000
      letterHeight = 0.05
      pos = (0,-.1)
      saveStartStop = False
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $testsound_label
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    KeyboardComponent adv_key_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine start_test_sound_loop
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    CodeComponent calib_sound_code
      Code Type = Both
      Begin JS Routine:
        // define testsound
        test_sound_audio = "fpjt_audios/testsound_" + String(lang_code) + ".wav";
      Begin Routine:
        # define testsound
        test_sound_audio = "fpjt_audios/testsound_" + str(lang_code) + ".wav"
      Each JS Frame:
        // show mouse
        if (t >= 2) {
            document.body.style.cursor = 'auto';
        }
      End JS Routine:
        // hide mouse
        document.body.style.cursor = 'none';
    TextComponent vol_calib_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $volume_calib_msg
      wrapWidth = 1.3
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    ImageComponent sound_image_right
      image = fpjt_images/sound-icon.png
      pos = (0.35,-.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sound_image_left
      image = fpjt_images/sound-icon.png
      pos = (-0.35,-.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent testsound_button
      autoLog = False
      bold = False
      borderColor = -1,-1,-1
      borderWidth = 3
      color = -1,-1,-1
      contrast = 0.6
      editable = False
      fillColor = 1.0000, 0.0980, -1.0000
      letterHeight = 0.05
      pos = (0,-.1)
      saveStartStop = False
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $testsound_label
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    MouseComponent mouse_vol
      clickable = testsound_button
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 2
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
  Routine demographics
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    CodeComponent demo_code
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor = 'auto';
      Begin Routine:
        # make mouse visible
        win.mouseVisible = True
      End JS Routine:
        document.body.style.cursor = 'none';
      End Routine:
        win.mouseVisible = False
    TextComponent demographics_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $demographics_msg
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    TextComponent age_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $age_msg
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    TextboxComponent age_textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.03
      placeholder = ...
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent gender_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gender_msg
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    SliderComponent gender_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '', '', '', '')
      letterHeight = 0.025
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    TextboxComponent label_female
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.5, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f_msg
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    TextboxComponent label_male
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.3, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $m_msg
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    TextboxComponent label_transgender
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.0275
      lineSpacing = 0.8
      pos = (-0.1, -0.1)
      saveStartStop = False
      size = (0.18, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tg_msg
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    TextboxComponent label_nonbinary
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.1, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $nb_msg
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    TextboxComponent label_other
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.3, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $o_msg
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    TextboxComponent label_prefer_not_say
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.5, -0.17)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pns_msg
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    TextComponent laterality_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $laterality_msg
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    SliderComponent laterality_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '')
      letterHeight = 0.025
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    TextboxComponent label_left
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.25, -0.45)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_msg
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    TextboxComponent label_ambi
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ambi_msg
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    TextboxComponent label_right
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.25, -0.45)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_msg
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    ButtonComponent next_button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (0.53, -0.35)
      save = first click
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $next_msg
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Flow
  Routine experiment_settings
  LoopInitiator load_language_loop loopType="TrialHandler"
    conditionsFile = Language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'German', 'ISO_code': 'DE'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'French', 'ISO_code': 'FR'}]
    Routine load_language
  LoopTerminator load_language_loop
  LoopInitiator update_message_loop loopType="TrialHandler"
    conditionsFile = fpjt_files/Messages.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'message': 'welcome_msg', 'EN': 'Welcome to the experiment!', 'DE': 'Willkommen zum Experiment!', 'ES': 'Bienvenido/a al experimento.', 'FR': 'Bienvenue dans l’expérience.'},
      {'message': 'adv_msg', 'EN': 'press SPACE to continue', 'DE': 'zum Fortfahren LEERTASTE drücken', 'ES': 'Pulse la BARRA ESPACIADORA para continuar.', 'FR': 'Appuyez sur la BARRE D’ESPACE pour continuer.'},
      {'message': 'bye_msg', 'EN': 'This is the end of the experiment.\nThank you for participating!\nThe experiment finishes in 3 seconds.', 'DE': 'Dies ist das Ende des Experiments.\nVielen Dank für Ihre Teilnahme!\nDas Experiment schließt sich in 3 Sekunden.', 'ES': 'Este es el final del experimento.\nGracias por su participación.\nEl experimento finalizará en 3 segundos.', 'FR': 'Ceci est la fin de l’expérience.\nMerci pour votre participation.\nL’expérience se terminera dans 3 secondes.'},
      {'message': 'volume_calib_msg', 'EN': 'In this experiment, you will listen to multiple audio recordings. Click on “Play test sound” and adjust the volume on your device accordingly.', 'DE': 'In diesem Experiment werden Sie mehrere Audios anhören. Klicken Sie auf ‚Testton abspielen‘ abspielen und stellen Sie die Lautstärke an Ihrem Gerät passend ein.', 'ES': 'En este experimento, escuchará varios audios. Haga clic en “Reproducir sonido de prueba” y ajuste el volumen de su dispositivo según sea necesario.', 'FR': 'Dans cette expérience, vous écouterez plusieurs enregistrements audio. Cliquez sur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
    Routine update_message
  LoopTerminator update_message_loop
  Routine welcome
  Routine helper
  Routine demographics
  Routine start_test_sound_loop
  LoopInitiator play_test_sound_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 999
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    Routine play_test_sound
  LoopTerminator play_test_sound_loop
  Routine famil_instruction
  LoopInitiator famil_loop loopType="TrialHandler"
    conditionsFile = fpjt_files/Famil_trials.xlsx
    loopType = random
    nReps = 1
    random seed = 123
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    conditions:
      [{'famil_image': 'fpjt_images/right_arm_side.jpg', 'famil_optionA': 'left_arm_side', 'famil_optionB': 'right_arm_front', 'famil_optionC': 'right_arm_side', 'famil_optionD': 'no_movement', 'famil_solution': 'right_arm_side', 'famil_option_solution': 'C'},
      {'famil_image': 'fpjt_images/right_arm_front.jpg', 'famil_optionA': 'left_arm_side', 'famil_optionB': 'right_arm_front', 'famil_optionC': 'left_arm_front', 'famil_optionD': 'no_movement', 'famil_solution': 'right_arm_front', 'famil_option_solution': 'B'},
      {'famil_image': 'fpjt_images/right_arm_up.jpg', 'famil_optionA': 'right_arm_front', 'famil_optionB': 'right_arm_up', 'famil_optionC': 'left_arm_up', 'famil_optionD': 'no_movement', 'famil_solution': 'right_arm_up', 'famil_option_solution': 'B'},
      {'famil_image': 'fpjt_images/left_arm_side.jpg', 'famil_optionA': 'right_arm_front', 'famil_optionB': 'left_arm_up', 'famil_optionC': 'left_arm_side', 'famil_optionD': 'no_movement', 'famil_solution': 'left_arm_side', 'famil_option_solution': 'C'},
      {'famil_image': 'fpjt_images/left_arm_front.jpg', 'famil_optionA': 'left_arm_front', 'famil_optionB': 'right_arm_front', 'famil_optionC': 'right_arm_side', 'famil_optionD': 'no_movement', 'famil_solution': 'left_arm_front', 'famil_option_solution': 'A'},
      {'famil_image': 'fpjt_images/left_arm_up.jpg', 'famil_optionA': 'right_arm_up', 'famil_optionB': 'left_arm_up', 'famil_optionC': 'left_arm_front', 'famil_optionD': 'no_movement', 'famil_solution': 'left_arm_up', 'famil_option_solution': 'B'}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
    Routine famil_trial
    Routine famil_feedback
  LoopTerminator famil_loop
  LoopInitiator CC_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 50
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    Routine task_instruction_1
    Routine task_instruction_2
    Routine CC
    Routine CC_feedback
  LoopTerminator CC_loop
  Routine pract_instruction
  LoopInitiator trials_loop_pr loopType="TrialHandler"
    conditionsFile = fpjt_files/Practice_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item': 'FPJT1PR', 'n_audios': 3, 'fpjt_image': 'fpjt_images/practice1.jpg', 'correct_both': 's', 'correct_one': 'g', 'audio1_EN': 'straight_EN.mp3', 'audio2_EN': 'torso_right_EN.mp3', 'audio3_EN': 'right_leg_side_EN.mp3'},
      {'item': 'FPJT2PR', 'n_audios': 3, 'fpjt_image': 'fpjt_images/practice2.jpg', 'correct_both': 's', 'correct_one': 'g', 'audio1_EN': 'straight_EN.mp3', 'audio2_EN': 'head_down_EN.mp3', 'audio3_EN': 'right_arm_up_EN.mp3'},
      {'item': 'FPJT3PR', 'n_audios': 3, 'fpjt_image': 'fpjt_images/practice3.jpg', 'correct_both': 'l', 'correct_one': 'h', 'audio1_EN': 'straight_EN.mp3', 'audio2_EN': 'left_leg_back_EN.mp3', 'audio3_EN': 'head_up_EN.mp3'},
      {'item': 'FPJT4PR', 'n_audios': 3, 'fpjt_image': 'fpjt_images/practice4.jpg', 'correct_both': 'l', 'correct_one': 'h', 'audio1_EN': 'straight_EN.mp3', 'audio2_EN': 'torso_left_EN.mp3', 'audio3_EN': 'left_arm_side_EN.mp3'}]
    Routine start_trial_pr
    LoopInitiator trial_instr_loop_pr loopType="TrialHandler"
      conditionsFile = fpjt_files/Practice_audios.xlsx
      isTrials = False
      loopType = sequential
      nReps = n_audios
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      conditions:
        [{'FPJT1PR': 'straight', 'FPJT2PR': 'straight', 'FPJT3PR': 'straight', 'FPJT4PR': 'straight'},
        {'FPJT1PR': 'torso_right', 'FPJT2PR': 'head_down', 'FPJT3PR': 'left_leg_back', 'FPJT4PR': 'torso_left'},
        {'FPJT1PR': 'right_leg_side', 'FPJT2PR': 'right_arm_up', 'FPJT3PR': 'head_up', 'FPJT4PR': 'left_arm_side'}]
      Routine trial_instr_pr
      Routine pause_betw_instr_pr
    LoopTerminator trial_instr_loop_pr
    Routine trial_open_eyes_pr
    Routine trial_fixcross_pr
    Routine trial_response_pr
    Routine trial_feedback_pr
  LoopTerminator trials_loop_pr
  Routine start_testbl
  Routine reminder
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = fpjt_files/Testblock_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item': 'FPJT51', 'n_audios': 6, 'fpjt_image': 'fpjt_images/51.jpg', 'correct_both': 'l', 'correct_one': 'h', 'a2': 'torso', 'a3': 'head', 'a4': 'leg', 'a5': 'arm', 'a6': 'arm', 'a7': 'none', 'n_audio_false': 0, 'bodypart_false': 'none'},
      {'item': 'FPJT52', 'n_audios': 6, 'fpjt_image': 'fpjt_images/52.jpg', 'correct_both': 's', 'correct_one': 'g', 'a2': 'torso', 'a3': 'arm', 'a4': 'leg', 'a5': 'head', 'a6': 'arm', 'a7': 'none', 'n_audio_false': 5, 'bodypart_false': 'right_arm'},
      {'item': 'FPJT53', 'n_audios': 6, 'fpjt_image': 'fpjt_images/53.jpg', 'correct_both': 's', 'correct_one': 'g', 'a2': 'leg', 'a3': 'torso', 'a4': 'head', 'a5': 'arm', 'a6': 'leg', 'a7': 'none', 'n_audio_false': 3, 'bodypart_false': 'head'},
      {'item': 'FPJT54', 'n_audios': 6, 'fpjt_image': 'fpjt_images/54.jpg', 'correct_both': 'l', 'correct_one': 'h', 'a2': 'leg', 'a3': 'leg', 'a4': 'torso', 'a5': 'arm', 'a6': 'head', 'a7': 'none', 'n_audio_false': 0, 'bodypart_false': 'none'},
      {'item': 'FPJT55', 'n_audios': 6, 'fpjt_image': 'fpjt_images/55.jpg', 'correct_both': 'l', 'correct_one': 'h', 'a2': 'leg', 'a3': 'head', 'a4': 'torso', 'a5': 'leg', 'a6': 'arm', 'a7': 'none', 'n_audio_false': 0, 'bodypart_false': 'none'},
      {'item': 'FPJT56', 'n_audios': 6, 'fpjt_image': 'fpjt_images/56.jpg', 'correct_both': 's', 'correct_one': 'g', 'a2': 'torso', 'a3': 'arm', 'a4': 'head', 'a5': 'leg', 'a6': 'leg', 'a7': 'none', 'n_audio_false': 5, 'bodypart_false': 'right_leg'}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
    Routine start_trial
    LoopInitiator trial_instr_loop loopType="TrialHandler"
      conditionsFile = fpjt_files/Testblock_audios.xlsx
      isTrials = False
      loopType = sequential
      nReps = n_audios
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      conditions:
        [{'FPJT31': 'straight', 'FPJT32': 'straight', 'FPJT33': 'straight', 'FPJT34': 'straight', 'FPJT35': 'straight', 'FPJT36': 'straight', 'FPJT37': 'straight', 'FPJT38': 'straight', 'FPJT41': 'straight', 'FPJT42': 'straight', 'FPJT43': 'straight', 'FPJT44': 'straight', 'FPJT45': 'straight', 'FPJT46': 'straight', 'FPJT47': 'straight', 'FPJT48': 'straight', 'FPJT51': 'straight', 'FPJT52': 'straight', 'FPJT53': 'straight', 'FPJT54': 'straight', 'FPJT55': 'straight', 'FPJT56': 'straight', 'FPJT57': 'straight', 'FPJT58': 'straight', 'FPJT61': 'straight', 'FPJT62': 'straight', 'FPJT63': 'straight', 'FPJ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,
        {'FPJT31': 'head_down', 'FPJT32': 'left_leg_back', 'FPJT33': 'right_arm_front', 'FPJT34': 'right_leg_back', 'FPJT35': 'left_arm_side', 'FPJT36': 'torso_right', 'FPJT37': 'head_up', 'FPJT38': 'torso_left', 'FPJT41': 'right_leg_front', 'FPJT42': 'left_leg_side', 'FPJT43': 'left_leg_back', 'FPJT44': 'right_leg_back', 'FPJT45': 'torso_left', 'FPJT46': 'torso_left', 'FPJT47': 'torso_left', 'FPJT48': 'torso_right', 'FPJT51': 'torso_left', 'FPJT52': 'torso_right', 'FPJT53': 'right_leg_back', 'FPJT54': 'left_leg_front', 'FPJT55': 'right_leg_front', 'FPJT56': 'torso_right', 'FPJT57': 'right_leg_back', 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,
        {'FPJT31': 'right_arm_side', 'FPJT32': 'torso_right', 'FPJT33': 'left_leg_side', 'FPJT34': 'torso_left', 'FPJT35': 'head_up', 'FPJT36': 'left_leg_front', 'FPJT37': 'left_arm_up', 'FPJT38': 'right_leg_front', 'FPJT41': 'torso_right', 'FPJT42': 'torso_right', 'FPJT43': 'torso_left', 'FPJT44': 'torso_right', 'FPJT45': 'left_arm_up', 'FPJT46': 'head_up', 'FPJT47': 'right_leg_back', 'FPJT48': 'head_up', 'FPJT51': 'head_down', 'FPJT52': 'left_arm_front', 'FPJT53': 'torso_left', 'FPJT54': 'right_leg_side', 'FPJT55': 'right_arm_side', 'FPJT56': 'left_arm_side', 'FPJT57': 'torso_left', 'FPJT58': 'torso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,
        {'FPJT31': 'right_leg_front', 'FPJT32': 'left_arm_front', 'FPJT33': 'head_down', 'FPJT34': 'left_arm_front', 'FPJT35': 'right_leg_side', 'FPJT36': 'right_arm_side', 'FPJT37': 'left_leg_back', 'FPJT38': 'right_arm_up', 'FPJT41': 'right_arm_front', 'FPJT42': 'left_arm_front', 'FPJT43': 'head_up', 'FPJT44': 'head_up', 'FPJT45': 'right_leg_side', 'FPJT46': 'left_leg_front', 'FPJT47': 'head_down', 'FPJT48': 'left_arm_up', 'FPJT51': 'right_leg_front', 'FPJT52': 'left_leg_back', 'FPJT53': 'head_up', 'FPJT54': 'torso_left', 'FPJT55': 'torso_right', 'FPJT56': 'head_down', 'FPJT57': 'left_arm_front', 'F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
      Routine trial_instr
      Routine pause_betw_instr
    LoopTerminator trial_instr_loop
    Routine trial_open_eyes
    Routine trial_fixcross
    Routine trial_response
    Routine trial_feedback
  LoopTerminator trials_loop
  Routine bye
